PsychoPy2experiment version="2021.1.4"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=32B6D3BE
  Data filename = u'../../../raw_data/sub-%03d/mushroom/sub-%03d_task-mushroom_run-prac_beh' % (int(expInfo['participant']),int(expInfo['participant']))
  Experiment info = {'participant': '', 'run': 'prac'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['low_peerConfidence.png', 'medium_peerConfidence.png', 'high_peerConfidence.png', 'wave1_input_confidence.csv']
  Screen = 1
  Units = height
  Window size (pixels) = [1504, 1003]
  expName = mushroomTask
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Routines
  Routine setupSamples
    CodeComponent set_up_samples
      Code Type = Both
      Begin JS Experiment:
        var trials_parameters;
      Begin JS Routine:
        if (startGame === 0) {
            trials_parameters = loop_prTrials;
            loop_prTrials._autoLog = false;
        } else if (startGame === 1) {
            trials_parameters = loop_trials;
            loop_trials._autoLog = false;
        }

        thisIndex = trials_parameters._snapshots[trial_index]["thisIndex"];
        nTotal = trials_parameters._trialList[thisIndex]["nTotal"];
        true_ratio = trials_parameters._trialList[thisIndex]["trueRatio"];
        given_ratio = trials_parameters._trialList[thisIndex]["trueRatio"];
        filler_trial = trials_parameters._trialList[thisIndex]["fillerTrial"];

        nSamples = 5;

        // create matrix that specifies the number of observations per sample
        nObservations = function () {
            var _pj_a = [], _pj_b = range(nSamples, 0);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var iSample = _pj_b[_pj_c];
                _pj_a.push(0);
            }
            return _pj_a;
        }
        .call(this);

        nLeft = nTotal;
        for (var iSample = 1, _pj_a = (nSamples + 1); (iSample < _pj_a); iSample += 1) {
            var xmin = ((- 1) * (((nSamples - iSample) * 9) - nLeft));
            xmin = Math.max(1, xmin);
            var xmax = ((- 1) * (((nSamples - iSample) * 1) - nLeft));
            xmax = Math.min(9, xmax);
            var x = randint(xmin, xmax + 1);
            nLeft = (nLeft - x);
            nObservations[(iSample - 1)] = x;
        }


        // Now create the randomized list with the actual observations to show
        nBlue = round((given_ratio * nTotal));
        seen_ratio = nBlue / nTotal;
        nRed = (nTotal - nBlue);
        itemList = ["blue", "red"];

        var repeat = (values, counts) => values.flatMap((v, i) => Array(counts[i]).fill(v)),
            itemList = repeat(itemList,[nBlue, nRed])
        shuffle(itemList);

        // Based on the shuffled list with 'red' and 'blue', define how many red's and blue's are in each sample.
        start = 0;
        blue = function () {
            var _pj_a = [], _pj_b = range(nSamples);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var iSample = _pj_b[_pj_c];
                _pj_a.push(0);
            }
            return _pj_a;
        }
        .call(this);

        red = function () {
            var _pj_a = [], _pj_b = range(nSamples);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var iSample = _pj_b[_pj_c];
                _pj_a.push(0);
            }
            return _pj_a;
        }
        .call(this);
        for (var iSample = 0, _pj_a = nSamples; (iSample < _pj_a); iSample += 1) {
            blue[iSample] = itemList.slice(start, (start + nObservations[iSample])).filter(element  => element == "blue").length
            red[iSample] = itemList.slice(start, (start + nObservations[iSample])).filter(element  => element == "red").length
            start = (start + nObservations[iSample]);
        }
      Begin Routine:
        # retrieved from file
        if startGame == 0:
            nTotal = thisLoop_prTrial['nTotal']
            true_ratio = thisLoop_prTrial['trueRatio']
            given_ratio = thisLoop_prTrial['trueRatio']
            filler_trial = thisLoop_prTrial['fillerTrial']
        elif startGame == 1:
            nTotal = thisLoop_trial['nTotal']
            true_ratio = thisLoop_trial['trueRatio']
            given_ratio = thisLoop_trial['trueRatio']
            filler_trial = thisLoop_trial['fillerTrial']
        nSamples = 5

        # create matrix that specifies the number of observations per sample
        nObservations = [0 for iSample in range(nSamples)]
        nLeft = nTotal
        for iSample in range(1,nSamples+1): # +1 to correct for 0-indexing in Python
            xmin = -1*((nSamples-iSample)*9-nLeft)  # nLeft-x <= (nSamples-iSample)x9, with 5 for number of total samples, 9 for max observations per sample in general.
            xmin = max(1,xmin) # xmin is either 1, or a higher minimum based on how many observations and samples still need to be shown
            xmax = -1*((nSamples-iSample)*1-nLeft) # nLeft-x >= (nSamples-iSample)x1, with 5 for number of total samples, 1 for min observations per sample in general.
            xmax = min(9,xmax) # xmax is either 9, or a lower maximum based on how many observations and samples still need to be shown
            toChooseFrom = [*range(xmin, xmax+1)] # +1 because python reads 'up to but not including xmax'
            x = sample(toChooseFrom,1)[0] # sample returns list; convert list to integer
            nLeft = nLeft - x
            nObservations[iSample-1] = x

        # Now create the randomized list with the actual observations to show
        nBlue = round(given_ratio * nTotal)
        seen_ratio = nBlue / nTotal
        nRed = nTotal - nBlue
        itemList = np.array(["blue", "red"])
        itemList = np.repeat(itemList, [nBlue, nRed])
        random.shuffle(itemList)

        # Based on the shuffled list with 'red' and 'blue', define how many red's and blue's are in each sample.
        start = 0
        blue = [0 for iSample in range(nSamples)]
        red = [0 for iSample in range(nSamples)]
        for iSample in range(nSamples):
          blue[iSample] = sum(itemList[start:(start+nObservations[iSample])]=="blue")
          red[iSample] = sum(itemList[start:(start+nObservations[iSample])]=="red")
          start = start + nObservations[iSample]
      End JS Routine:
        sample_index = 0;
      End Routine:
        sample_index = 0
  Routine crossHair
    TextComponent cross_hair
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = crosshair_ITI
      text = +
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        crosshair_ITI = Math.floor(((Math.random() * (6.1 - 4.0)) + 4.0)* 10) / 10;
        document.body.style.cursor='none';
      Begin Routine:
        crosshair_ITI = round(random.random() * (2.0 - 1.5) + 1.5, 1)

        win.mouseVisible = False
      End Routine:
        #win.getMovieFrame()
        #win.saveMovieFrames('crosshair.png')
  Routine mushroomSample
    TextComponent text_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        S = ["blue", "red"];
        var repeat = (values, counts) => values.flatMap((v, i) => Array(counts[i]).fill(v)),
            S = repeat(S,[blue[sample_index], red[sample_index]])

        ok = 0;
        while ((ok === 0)) {
            var coor_x = [];
            while(coor_x.length < nObservations[sample_index]){
                var r =((Math.random() * (aperture_size - (- aperture_size))) + (- aperture_size));
                if(coor_x.indexOf(r) === -1) coor_x.push(r);
            }
            var coor_y = [];
            while(coor_y.length < nObservations[sample_index]){
                var r =((Math.random() * (aperture_size - (- aperture_size))) + (- aperture_size));
                if(coor_y.indexOf(r) === -1) coor_y.push(r);
            }
            var diff_x = allAbsDifferences(coor_x, coor_x.length);
            var diff_y = allAbsDifferences(coor_y, coor_y.length);
            var match;
            var tooClose_xy = [];
            for(var el = 0; el < diff_x.length; el++) {
                match = 0;
                if (diff_x[el] <= (mushroom_size * 0.9) && diff_y[el] <= (mushroom_size * 0.9)) {
                    match = 1;
                }
                tooClose_xy.push(match);
            }
            if (tooClose_xy.every(x => x == 0)) {
                ok = 1;
            }
        }

        if ((red[sample_index] > 0)) {
            red_mushrooms = function () {
            var _pj_a = [], _pj_b = range(red[sample_index]);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(new visual.ImageStim({
                    win: psychoJS.window,
                    name: "red_mushrooms", image: "red_mushroom.png",
                    pos: [coor_x[i], coor_y[i]], size: [mushroom_size, mushroom_size],
                    }));
            }
            return _pj_a;
            }
            red_mushrooms = red_mushrooms();
            for (var i, _pj_c = 0, _pj_a = red_mushrooms, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                i.setAutoDraw(true);
            }
        }


        if ((blue[sample_index] > 0)) {
            blue_mushrooms = function () {
            var _pj_a = [], _pj_b = range(blue[sample_index], red[sample_index]);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(new visual.ImageStim({
                    win: psychoJS.window,
                    name: "blue_mushrooms", image: "blue_mushroom.png",
                    pos: [coor_x[i], coor_y[i]], size: [mushroom_size, mushroom_size],
                    }));
            }
            return _pj_a;
            }
            blue_mushrooms = blue_mushrooms();
            for (var i, _pj_c = 0, _pj_a = blue_mushrooms, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                i.draw();
            }
        }
      Begin Routine:
        # At the start of each sample, create a matrix with x and y coordinates of stimuli on screen
        S = np.array(["blue", "red"])
        # item = thisLoop_sample['item']
        S = np.repeat(S, [blue[sample_index], red[sample_index]])
        ok = 0
        while ok == 0:
            coor_x = np.array(random.uniform(-aperture_size,aperture_size, nObservations[sample_index]))
            coor_y = np.array(random.uniform(-aperture_size,aperture_size, nObservations[sample_index]))
            diff_x = abs(coor_x[:, None] - coor_x)
            diff_y = abs(coor_y[:, None] - coor_y)
            # check if there is a pair for which both x and y coordinates overlap. If so, resample coordinates
            tooClose = (diff_x <= mushroom_size*0.8) & (diff_y <= mushroom_size*0.8)
            if (np.triu(tooClose, k=1)==False).all(): # only take into account upper triangle to get rid of diagonal which is always 0/True.
                ok = 1

        # initialize mushroom images
        if red[sample_index] > 0:
            red_mushrooms = [visual.ImageStim(
                win=win,
                name='red_mushrooms',
                image='red_mushroom.png', mask=None,
                ori=0.0, pos=(coor_x[i], coor_y[i]), size=[mushroom_size],
                color=[1,1,1], colorSpace='rgb', opacity=None,
                flipHoriz=False, flipVert=False,
                texRes=128.0, interpolate=True, depth=0.0)
               for i in range(red[sample_index])]
            for i in red_mushrooms:
                i.autoDraw = True
        if blue[sample_index] > 0:
            blue_mushrooms = [visual.ImageStim(
                win=win,
                name='blue_mushrooms',
                image='blue_mushroom.png', mask=None,
                ori=0.0, pos=(coor_x[i], coor_y[i]), size=[mushroom_size],
                color=[1,1,1], colorSpace='rgb', opacity=None,
                flipHoriz=False, flipVert=False,
                texRes=128.0, interpolate=True, depth=0.0)
               for i in range(red[sample_index],red[sample_index]+blue[sample_index])]
            for i in blue_mushrooms:
                i.setAutoDraw(True)

        #win.getMovieFrame()
        #name = "sample_{age}.png".format(age = sample_index)
        #win.saveMovieFrames(name)
      Each Frame:
        if t < 1.2:
            continueRoutine = True
        else:
            continueRoutine = False
      End JS Routine:
        if ((red[sample_index] > 0)) {
            for (var i, _pj_c = 0, _pj_a = red_mushrooms, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                i.setAutoDraw(false);
            }
        }
        if ((blue[sample_index] > 0)) {
            for (var i, _pj_c = 0, _pj_a = blue_mushrooms, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                i.setAutoDraw(false);
            }
        }

        sample_index = (sample_index + 1);
      End Routine:
        if red[sample_index] > 0:
            for i in red_mushrooms:
                i.setAutoDraw(False)

        if blue[sample_index] > 0:
            for i in blue_mushrooms:
                i.setAutoDraw(False)

        sample_index = sample_index + 1
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  Routine setup
    CodeComponent code_start
      Code Type = Both
      Before Experiment:
        import pandas as pd
        import numpy as np
        from numpy import random
        from random import sample
        from random import shuffle
        import math
      Begin Experiment:
        window_dimension = win.size[0] / win.size[1]
        window_y = 0.5
        window_x = window_y * window_dimension
        aperture_size = window_y * 0.5 # size of square where the mushrooms can be shown (in one direction)
        mushroom_size = aperture_size * 0.50 # size of mushroom is 1/10th of screen heigth

        maxRT = 20
        SI_delay = 4

        # background color
        bg_color=colors.Color((0, 0, 0), space='rgb')
        win.color = bg_color
        win.mouseVisible = False

        # date as empty string
        expInfo['date'] = ""  # overwrite actual date to deidentify data

        # Create scan directory & all intermediate directories if don't exists (only if connected to storage folder)
        dirName = _thisDir + os.sep + u'../../../raw_data/sub-%03d/scans' % (int(expInfo['participant']))
        if not os.path.exists(dirName):
            os.makedirs(dirName)

        # create directory to save image of .nii file to send to pp
        dirName = _thisDir + os.sep + u'../../brain_pictures/sub-%03d' % (int(expInfo['participant']))
        if not os.path.exists(dirName):
            os.makedirs(dirName)
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        shuffle = util.shuffle;
        Array.prototype.append = [].push;

        randint = function(min, maxplusone) {
            return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }

        range = function (size, startAt = 0) {
            return [...Array(size).keys()].map(i => i + startAt);
        }

        sum = function (arr) {
            return arr.reduce((a,b)=>a+b)
        }

        allAbsDifferences = function(arr, N){
            var diff;
            var diff_list = [];
            // Traverse the array
            for(var elementA = 0; elementA < N; elementA++)
            {
                for(var elementB = 0; elementB < N; elementB++)
                {
                    if ((elementA !== elementB)) {
                        diff = Math.abs((arr[elementA] - arr[elementB]));
                        diff_list.push(diff);
                    }
                }
            }
            return diff_list;
        }

        arrayMatch = function(arr1, arr2) {
            var match;
            var match_list = [];
            for (var i = 0; i < arr1.length; i++) {
                match = 0;
                if (arr1[i] == arr2[i]) {
                    match = 1;
                }
                match_list.push(match)
            }
            return match_list;
        }

        // background color
        bg_color= new util.Color([-0.4000, -0.4000, -0.4000])
        win.color = bg_color
      Begin JS Routine:
        // define trial selection
        selected_practice_trials = shuffle(range(42,0));
        selected_practice_trials.length = 1;
        selected_trials = shuffle(range(54,0));
        selected_trials.length = 3;

        // initialize value for too late trials
        n_tooLate = 0;

        test_Q1._skin["STANDARD"]["MARKER_COLOR"] = new util.Color('black') // sets marker color for all sliders
      Begin Routine:
        # define trial selection
        selected_practice_trials = randchoice([5,6,7], size = 3, replace = False)
        selected_trials = randchoice(15, size = 15, replace = False)

        # define trial selection
        expInfo['trialStructure_file'] = 'trial_structure_prac.csv'

        list_deviance = []
      End JS Routine:
        window_dimension = (win.size[0] / win.size[1]);
        window_y = 0.5;
        window_x = (window_y * window_dimension);
        aperture_size = (window_y * 0.4);
        mushroom_size = (aperture_size * 0.5);
  Routine ISI
    TextComponent isi
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.3
      units = height
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  Routine import_wave1_data
    CodeComponent import_data
      Code Type = Both
      Begin JS Routine:
        wave1Data = new TrialHandler({
                psychoJS: psychoJS,
                nReps: 1, method: TrialHandler.Method.SEQUENTIAL,
                extraInfo: expInfo, originPath: undefined,
                trialList: 'wave1_input_confidence.csv',
                seed: undefined, name: 'wave1Data'
            });

        wave1 = wave1Data.getTrialList()


        // make list of all nTotal, ratio levels and confidence levels
        levels_nTotal = [5, 45];
        levels_ratio = [0.125, 0.25, 0.375, 0.5, 0.625, 0.75, 0.875];
        levels_confidence = [1, 2, 3];
        repeat = (values, counts) => values.flatMap((v, i) => Array(counts[i]).fill(v));
        all_nTotals = repeat(levels_nTotal, Array(levels_nTotal.length).fill(levels_ratio.length*levels_confidence.length).flat());
        all_ratios = Array(levels_nTotal.length).fill(repeat(levels_ratio, Array(levels_ratio.length).fill(levels_confidence.length).flat())).flat()


        // create shuffled list of confidence levels for each combination of nTotal and ratio
        all_confidences = [];
        for (var i, _pj_c = 0, _pj_a = levels_nTotal, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            for (var k, _pj_f = 0, _pj_d = levels_ratio, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                k = _pj_d[_pj_f];
                all_confidences.push(...shuffle(levels_confidence));
            }
        }



        // combine nTotal ratio and confidence into one object
        nTotal_ratio_confidence = [];
        for (var i, _pj_c = 0, _pj_a = all_nTotals, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_c;
            nTotal_ratio_confidence[i] = { nTotal: all_nTotals[i], ratio: all_ratios[i], confidence: all_confidences[i] };
        }

        // make list for filler rounds: for practice outside scanner, use only close SI
        SI_fillers = shuffle([3, 3, 3]);
      Begin Routine:
        wave1Data = data.TrialHandler(nReps=1, method='sequential',
            extraInfo=expInfo, originPath=-1,
            trialList=data.importConditions('wave1_input_confidence.csv'),
            seed=None, name='wave1Data')

        wave1 = wave1Data.trialList

        # make list of all nTotal, ratio levels and confidence levels
        levels_nTotal = [5, 45]
        levels_ratio = [0.125, 0.25, 0.375, 0.5, 0.625, 0.75, 0.875]
        levels_confidence = [1, 2, 3]
        all_nTotals = np.repeat(levels_nTotal, len(levels_ratio)*len(levels_confidence))
        all_ratios = np.repeat(np.repeat(np.expand_dims(levels_ratio, axis=0), len(levels_nTotal), axis=0), len(levels_confidence))

        # create shuffled list of confidence levels for each combination of nTotal and ratio
        all_confidences = []
        for iConfidenceLists in range(len(levels_nTotal)*len(levels_ratio)):
            shuffle(levels_confidence)
            all_confidences.append(levels_confidence[:])
        all_confidences = np.asarray(all_confidences).reshape(-1)

        # combine nTotal ratio and confidence into one object
        nTotal_ratio_confidence = [];
        for iTrials in range(len(all_nTotals)):
            nTotal_ratio_confidence.append({ "nTotal": all_nTotals[iTrials], "ratio": all_ratios[iTrials], "confidence": all_confidences[iTrials] })

        # make list for filler rounds: 6 x SI which is closer than 3 percentage points, 3 x SI which is further than 40 percentage points.
        SI_fillers = [3, 3, 3, 3, 3, 3, 40, 40, 40]
        shuffle(SI_fillers)
  Routine instrPrac
    KeyboardComponent response
      allowedKeys = 'right', 'left', 'return', 'num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_5
      Code Type = Both
      Begin Experiment:
        Pr1 = ("PADDENSTOELEN SPEL:\n\n\nJe gaat nu eerst te instructies lezen, gevolgd door een aantal oefenrondes.\n\n"
        "Je kunt heen en weer gaan door de instructies door middel van de LINKER en RECHTER PIJL op het toetsenbord.\n\n\n"
        "Druk nu op de RECHTER pijl om door te gaan naar de volgende instructies.")

        Pr2 = ("In dit spel leef je met een groep mensen voor wie het eten van paddenstoelen erg belangrijk is.\n\n"
        "Deze paddenstoelen worden geoogst uit een bos vlak bij jouw dorp. "
        "Binnenkort is het tijd om te oogsten, en de leider van de groep heeft jou gevraagd om de oogst in goede banen te leiden.\n\n\n\n\n\n\n\n\n\n")

        Pr3 = ("Elke dag gaan er 100 mensen van de groep het bos in om paddenstoelen te plukken.\n"
        "Omdat de paddenstoelen erg breekbaar zijn, kan er maar 1 paddenstoel per zak meegenomen worden.\n\n"
        "Er zijn 2 soorten paddenstoelen: blauwe en rode.\n"
        "Het probleem is dat deze twee soorten paddenstoelen elk hun eigen zak nodig hebben: "
        "Een blauwe paddenstoel kan alleen meegenomen worden in een blauwe zak en een rode paddenstoel kan alleen meegenomen worden in een rode zak.\n\n\n\n\n\n\n\n\n\n\n\n")

        Pr4 = ("Aan het begin van iedere dag is het jouw taak om te beslissen hoeveel mensen het bos in gaan met een blauwe zak en hoeveel mensen het bos in gaan met een rode zak.\n\n"
        "Als er op een bepaalde dag 70 blauwe paddenstoelen en 30 rode paddenstoelen in het bos zijn, dan moet jij aan 70 mensen een blauwe zak en aan 30 mensen een rode zak geven.\n\n"
        "Als je te veel mensen een blauwe zak zou geven, dan zouden sommigen van de plukkers die een blauwe zak dragen thuiskomen met een lege zak, "
        "terwijl er rode paddenstoelen in het bos blijven staan omdat er niet genoeg mensen waren met een rode zak. "
        "Dat zou betekenen dat je oogst niet optimaal is.")

        Pr5 = ("Om een goede schatting te maken over hoeveel paddenstoelen plukkers een blauwe of een rode zak moeten dragen "
        "sta je elke ochtend vroeg op om door 5 velden te lopen die om je dorp heen liggen.\n\n"
        "In deze velden groeien ook al een paar blauwe en rode paddenstoelen. "
        "De paddenstoelen die hier groeien zijn een afspiegeling van wat je op die dag zult vinden in het bos.\n\n"
        "Dus, op basis van het aantal blauwe en rode paddenstoelen in de 5 velden kun je beslissen hoeveel paddenstoelen plukkers je een blauwe of een rode zak geeft.\n\n\n\n\n\n\n\n\n\n\n\n")

        Pr6 = ("Op sommige dagen vind je veel paddenstoelen in de velden, dus heb je veel informatie om je beslissing op te baseren. "
        "Op andere dagen vind je echter weinig paddenstoelen in de velden, dus heb je weinig informatie om je beslissing op te baseren.\n\n"
        "Hoe meer paddestoelen je in de velden vindt, hoe preciezer ze een afspiegeling zijn van de paddenstoelen in het bos.\n"
        "Bijvoorbeeld, als je 10 blauwe en 40 rode paddenstoelen in de velden vindt heb je meer informatie en kun je dus zekerder zijn van je beslissing dan als je 1 blauwe en 4 rode paddenstoelen vindt.")

        Pr7 = ("Tijdens het spel zie je eerst de paddenstoelen in elk van de 5 velden.\n\n"
        "Je beslist dan hoeveel blauwe en rode zakken vandaag moeten worden meegenomen naar het bos. "
        "Je geeft je antwoord aan op een balk. Hiervoor gebruik je de pijlen op het toetsenbord.\n\n"
        "Je hebt 20 seconden om je antwoord te geven. Dit is ruim genoeg tijd om over je antwoord na te denken. "
        "Als je er langer over doet dan 20 seconden krijg je een waarschuwing dat je te laat was.\n\n\n\n\n\n\n\n\n\n\n\n\n")

        Pr8 = ("Je wordt dan gevraagd om met de muis aan te geven hoe zeker je was van je beslissing.\n\n\n\n\n\n\n\n\n\n\n")

        Pr9 = ("Je speelt meerdere rondes. Elke ronde is een nieuwe dag en alle dagen samen vormen het hele oogstseizoen.\n"
        "Je gaat nu eerst een aantal dagen van de oogst oefenen.\n\n"
        "Druk op ENTER om de oefening te starten en gebruik de pijlen om te antwoorden.")




        PrDict = { "1": Pr1,
                      "2": Pr2,
                      "3": Pr3,
                      "4": Pr4,
                      "5": Pr5,
                      "6": Pr6,
                      "7": Pr7,
                      "8": Pr8,
                      "9": Pr9,
        }

        currentPr = "1"
      Begin JS Experiment:
        Pr1 = "MUSHROOM GAME\n\n\nBefore we start the game, we will provide you with some instructions, followed by a few practice rounds.\n\nYou can go back and forth through the instructions by pressing the LEFT and RIGHT arrow keys.\n\n\nNow press the RIGHT arrow key to move on to the next instruction."

        Pr2 = "In this game, you are part of a community for which the main food resource is mushrooms.\n\nThese mushrooms are harvested from a forest in the vicinity of your village. Soon, it will be time to harvest, and the leader of the community has asked you for your help in coordinating this."

        Pr3 = "Each day, 100 people from the community will enter the forest.\nEach person will carry a bag to pick 1 type of mushroom.\n\nThere are two types of mushrooms, blue and red ones.\nThe problem is that these two types of mushrooms each need their own type of bag. A blue mushroom can only be carried in a blue bag and a red mushroom can only be carried in a red bag."

        Pr4 = "Your task at the start of the day is to decide how many people will go into the forest carrying a blue bag and how many people will be carrying a red bag.\n\nIf on one day there are 70 blue mushrooms and 30 red mushrooms in the forest, you need to give 70 people a blue bag and 30 people a red bag. If you would give too many people a blue bag, some people carrying a blue bag would arrive home with an empty bag, while some red mushrooms would be left in the forest because there were not enough people with a red bag.\nThat means your yield would not be optimal."

        Pr5 = "To make an informed guess about how many mushroom pickers should carry a blue or a red bag, you will get up early each morning to walk through 5 fields that surround your village.\n\nThere are some blue and red mushrooms growing in these fields. You know that the mushrooms you see here are a good, but not exact representation of what will be found in the forest on that day.\n\nThus, based on the number of blue versus red mushrooms in these 5 nearby fields, you can decide how many pickers you give a blue or a red bag."

        Pr6 = "On some days, you encounter many mushrooms in the fields, so you have a large sample to base your decision on. On other days, however, you encounter fewer mushrooms, so you have less information to base your decision on.\n\nThe more mushrooms you find in the nearby fields, the more precisely they represent the mushrooms in the forest.\nFor example, if you find 10 blue and 40 red mushrooms in the field, you can be more certain of your decision than when you would have found 1 blue and 4 red mushrooms."

        Pr7 = "During the game, you will first see the mushrooms in each of the 5 fields.\n\nYou are then asked to decide how many out of 100 pickers should carry a blue bag.\n\nNote that the number of pickers who should carry a blue bag is not necessarily the same as the number of blue mushrooms you found in the fields, because the number of mushrooms in the field is only a small sample.\nFor example, if you found 2 blue and 18 red mushrooms in the field, the optimal number of pickers carrying a blue bag would probably be around 10 out of 100 pickers, not 2 out of 100.\n\nYou will play multiple rounds. Each round represents a new day and all days together represent the entire harvest season."

        Pr8 = "You have 10 seconds to submit your decision, which is ample of time to think about your decision carefully. If you take longer than 10 seconds, you will get a warning message saying that you were too late. If that happens too often, the game will terminate automatically and you are asked to return your submission.\n\nTo get a better understanding of the task and how everything looks, you will first play some practice days.\n\nPress ENTER to start the practice."

        PrDict = {"1": Pr1, "2": Pr2, "3": Pr3, "4": Pr4, "5": Pr5, "6": Pr6, "7": Pr7, "8": Pr8};
        currentPr = "1";
      Begin JS Routine:
        // only run if phase is 1
        if (practice_phase !== 1) {
            loop_instrPrac.finished = true;
            continueRoutine = false;
        }

        event.clearEvents();

        progress_bar_size = (((window_x * 2) / 18) * Number.parseInt(currentPr));
        progress_bar_pos = ((- window_x) + ((((window_x * 2) / 18) * Number.parseInt(currentPr)) / 2));
        progress_text = (("Instructions: " + currentPr) + "/18");
      Begin Routine:
        # only run if phase is 1
        if practice_phase is not 1:
            loop_instrPrac.finished = True
            continueRoutine = False

        event.clearEvents()

        progress_bar_size = (window_x*2)/18 * int(currentPr)
        progress_bar_pos = (-window_x) + (window_x*2)/18 * int(currentPr) / 2
        progress_text = "Instructies: " + currentPr + "/18"
      End JS Routine:
        if ((((response.keys === "return") || (response.keys === "num_enter")) && (Number.parseInt(currentPr) === 8))) {
            currentPr = (Number.parseInt(currentPr) + 1);
        } else {
            if (((response.keys === "right") && (Number.parseInt(currentPr) === 8))) {
                currentPr = Number.parseInt(currentPr);
            } else {
                if (((response.keys === "right") && (Number.parseInt(currentPr) !== 8))) {
                    currentPr = (Number.parseInt(currentPr) + 1);
                } else {
                    if ((response.keys === "left")) {
                        currentPr = (Number.parseInt(currentPr) - 1);
                    }
                }
            }
        }
        if ((currentPr === 0)) {
            currentPr = 1;
        } else {
            if ((currentPr === 9)) {
                loop_instrPrac.finished = true;
            }
        }
        currentPr = currentPr.toString();
        trial_index = 0;
      End Routine:
        #win.getMovieFrame()
        #name = "instrPractice_{age}.png".format(age = currentPr)
        #win.saveMovieFrames(name)

        if (response.keys == "return" or response.keys == "num_enter") and int(currentPr) == 9:
            currentPr = int(currentPr) + 1
        elif response.keys == "right" and int(currentPr) == 9:
            currentPr = int(currentPr)
        elif response.keys == "right" and int(currentPr) != 9:
            currentPr = int(currentPr) + 1
        elif response.keys == "left":
            currentPr = int(currentPr) - 1

        if currentPr == 0:
            currentPr = 1  # can't go lower than
        elif currentPr == 10:
            loop_instrPrac.finished=True
            currentPr = 1 # otherwise, currentPr will give an error on the next round, because it is out-of-range.

        currentPr = str(currentPr)
    TextComponent text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $PrDict[currentPr]
      wrapWidth = 1.2
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    ImageComponent blue_mushroom
      flipHoriz = True
      image = blue_mushroom.png
      ori = 350
      pos [set every repeat] = (window_x-0.3, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent red_mushroom
      image = red_mushroom.png
      ori = 10
      pos [set every repeat] = (window_x-0.2, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent progress_bar_fixed_2
      fillColor = white
      pos [set every repeat] = (0, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_x*2, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent progress_bar_2
      fillColor = green
      lineColor = green
      pos [set every repeat] = (progress_bar_pos, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (progress_bar_size, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent progress_IC_2
      color = black
      letterHeight = 0.02
      pos = (0, 0.48)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        $progress_text
    ImageComponent img_forest
      image = img_forest.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.6153, 0.338)
      startVal [condition] = currentPr == "2"
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    ImageComponent img_bags
      image = img_bags.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.6153, 0.338)
      startVal [condition] = currentPr == "3"
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    ImageComponent img_fields
      image = img_fields.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.6153, 0.338)
      startVal [condition] = currentPr == "5"
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    ImageComponent screenshotE1
      image = screenshot_E1.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.640, 0.35)
      startVal [condition] = currentPr == "7"
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    ImageComponent screenshotConfidenceRating
      image = screenshot_confidenceRating.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.5396, 0.2604)
      startVal [condition] = currentPr == "8"
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  Routine set_practicePhase
    CodeComponent set_phase
      Code Type = Auto->JS
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      Begin Experiment:
        practice_phase = 0
      Begin Routine:
        practice_phase += 1
        startGame = 0
  Routine instrBonus
    KeyboardComponent key_resp_2
      allowedKeys = 'right', 'left', 's'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_7
      Code Type = Both
      Begin Experiment:
        event.clearEvents()

        Instr1 = ("BONUS:\n\n"
        "Aan het eind van het spel krijg je een bonus.\n"
        "De hoogte van deze bonus hangt af van hoe goed je het doet tijdens het spel en wordt als volgt berekend:\n\n"
        "De computer kiest willekeurig een van de oogstdagen uit en vergelijkt jouw antwoord op die dag met het goede antwoord. "
        "De kans dat de computer je eerste of je tweede beslissing van die dag kiest is even groot, dus beide beslissingen zijn even belangrijk.\n\n"
        "Als jouw beslissing precies goed was, dan krijg je een bonus van €1,50. Voor elke zak die je ernaast zat wordt er 4 cent afgetrokken.")

        Instr2 = ("Bijvoorbeeld, als jij had beslist om 70 van de 100 plukkers een blauwe zak mee te geven, maar er waren 88 blauwe paddenstoelen in het bos, "
        "dan krijg je €1,50 - 18 x €0,04 = €0,78.\n\n"
        "Je bonus is nooit lager dan €0,00.\n\n"
        "Iedere dag kan bepalend zijn voor hoeveel bonus je aan het eind krijgt en iedere dag is dus even belangrijk.")

        Instr3 = ("Zoals eerder gezegd bestaat het spel uit meerdere oogstdagen en alle dagen samen vormen het oogstseizoen. "
        "In de MRI scanner zul je 3 oogstseizoenen spelen. Na elk seizoen kun je even pauze nemen voordat je verder gaat met het volgende seizoen.\n\n"
        "Je gaat nu eerst 1 korter seizoen op de computer spelen om te oefenen. Je kunt nu nog geen bonus verdienen.\n\n"
        "Vraag aan de onderzoeker om dit oefenblok te starten.")


        InstrDict = { "1": Instr1,
                      "2": Instr2,
                      "3": Instr3,
        }

        currentInstr = "1"
      Begin JS Experiment:
        event.clearEvents();


        Instr1 = "BONUS:\n\nAt the end of the harvest season you will receive a bonus.\nThe amount of this bonus depends on how well you did during the game, and is calculated as follows:\n\nThe computer will randomly pick one of the harvest days and compare your decision that day to the correct answer. Their is an equal chance that the computer picks your first or your second decision, so both decisions are equally important.\n\nIf your decision was exactly correct, you will receive a bonus of \u00a31.50. For each blue bag off, we will deduct 4 pence.\n\n\nPress the RIGHT arrow key to continue."

        Instr2 = "For example, if you decided to give 70 out of the 100 pickers a blue bag, but there were 88 blue mushrooms in the forest, you will receive \u00a31.50 - 18 x \u00a30.04 = \u00a30.78.\n\nYour bonus will never go below \u00a30.00.\n\nThis means that each and every day might determine your bonus at the end of the season.\n\n\nPress the RIGHT arrow key to continue."

        Instr3 = "As said before, the game will consist of multiple harvest days and all days together represent the harvest season. The entire season consists of 3 blocks. After each block, you can take a short break before continuing with the next block.\n\nPlease remember that you have 10 seconds to submit each decision, which is ample of time to think about your decision carefully. If you take longer than 10 seconds, you will get a warning message saying that you were too late. If that happens too often, the game will terminate automatically and you are asked to return your submission.\n\n\n\nIf everything is clear, you can press ENTER to start the game."
        InstrDict = {"1": Instr1, "2": Instr2, "3": Instr3};
        currentInstr = "1";
      Begin JS Routine:
        // only run if phase is 2
        if (practice_phase !== 2) {
            loop_instrBonus.finished = true;
            continueRoutine = false;
        }

        progress_bar_size = (((window_x * 2) / 18) * (Number.parseInt(currentInstr) + 15));
        progress_bar_pos = ((- window_x) + ((((window_x * 2) / 18) * (Number.parseInt(currentInstr) + 15)) / 2));
        progress_text = (("Instructions: " + (Number.parseInt(currentInstr)+15).toString()) + "/18");
      Begin Routine:
        # only run if phase is 2
        if practice_phase is not 2:
            loop_instrBonus.finished = True
            continueRoutine = False

        progress_bar_size = (window_x*2)/18 * (int(currentInstr) + 15)
        progress_bar_pos = (-window_x) + (window_x*2)/18 * (int(currentInstr) + 15) / 2
        progress_text = "Instructions: " + str(int(currentInstr)+15) + "/18"
      End JS Routine:
        if ((((key_resp_2.keys === "return") || (key_resp_2.keys === "num_enter")) && (Number.parseInt(currentInstr) === 3))) {
            currentInstr = (Number.parseInt(currentInstr) + 1);
        } else {
            if (((key_resp_2.keys === "right") && (Number.parseInt(currentInstr) === 3))) {
                currentInstr = Number.parseInt(currentInstr);
            } else {
                if (((key_resp_2.keys === "right") && (Number.parseInt(currentInstr) !== 3))) {
                    currentInstr = (Number.parseInt(currentInstr) + 1);
                } else {
                    if ((key_resp_2.keys === "left")) {
                        currentInstr = (Number.parseInt(currentInstr) - 1);
                    }
                }
            }
        }
        if ((currentInstr === 0)) {
            currentInstr = 1;
        } else {
            if ((currentInstr === 4)) {
                loop_instrBonus.finished = true;
            }
        }
        currentInstr = currentInstr.toString();
        list_deviance = [];
        trial_index = 0;
        startGame = 1;
      End Routine:
        #win.getMovieFrame()
        #name = "instructions_{age}.png".format(age = currentInstr)
        #win.saveMovieFrames(name)

        if (key_resp_2.keys == "s") and int(currentInstr) == 3:
            currentInstr = int(currentInstr) + 1
        elif key_resp_2.keys == "right" and int(currentInstr) == 3:
            currentInstr = int(currentInstr)
        elif key_resp_2.keys == "right" and int(currentInstr) != 3:
            currentInstr = int(currentInstr) + 1
        elif key_resp_2.keys == "left":
            currentInstr = int(currentInstr) - 1

        if currentInstr == 0:
            currentInstr = 1  # can't go lower than
        elif currentInstr == 4:
            loop_instrBonus.finished=True

        currentInstr = str(currentInstr)

        list_deviance = []
        trial_index = 0
        startGame = 1
    TextComponent text_3
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $InstrDict[currentInstr]
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    ImageComponent blue_mushroom_2
      flipHoriz = True
      image = blue_mushroom.png
      ori = 350
      pos [set every repeat] = (window_x-0.3, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent red_mushroom_2
      image = red_mushroom.png
      ori = 10
      pos [set every repeat] = (window_x-0.2, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent progress_bar_fixed_3
      fillColor = white
      pos [set every repeat] = (0, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_x*2, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent progress_bar_3
      fillColor = green
      lineColor = green
      pos [set every repeat] = (progress_bar_pos, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (progress_bar_size, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent progress_IC_3
      color = black
      letterHeight = 0.02
      pos = (0, 0.48)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        $progress_text
  Routine tooLate_feedback
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # only run if participant was too late
        if tooLate == 0:
            continueRoutine = False
    TextComponent tooLate_fb
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Te laat!
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  Routine start_slide
    TextComponent text_4
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welkom bij het Paddenstoelen spel.

        Druk op ENTER om te starten.
    KeyboardComponent key_resp
      allowedKeys = 'enter', 'return'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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
  Routine instrPrac2
    KeyboardComponent response_3
      allowedKeys = 'right', 'left', 'return', 'num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_16
      Code Type = Py
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      Begin Experiment:
        Pr2_1 = ("Goed gedaan!\n\nNadat je je antwoord hebt gegeven, zie je de beslissing van iemand anders die dit spel op een eerder moment gespeeld heeft.\n\n"
        "Het aantal blauwe en rode paddenstoelen in het bos was hetzelfde voor deze deelnemer, "
        "maar deze deelnemer kwam uit een ander dorp aan de andere kant van het bos. \n"
        "Dat betekent dat deze deelnemer in de ochtend door andere velden aan de andere kant van het bos ging lopen, en het aantal blauwe en rode paddenstoelen in deze velden was misschien anders dan in de velden waar jij doorheen liep.\n\n\n\n\n\n\n\n\n\n\n\n\n\n")

        Pr2_2 = ("Jij vond bijvoorbeeld 5 paddenstoelen in de velden, terwijl die andere deelnemer 50 paddenstoelen vond. De andere deelnemer had dus meer informatie dan jij om zijn of haar beslissing op te baseren.\n"
        "Het kan ook zijn dat de andere deelnemer minder paddenstoelen in de velden vond dan jij en dus minder informatie had.\n\n"
        "Je weet echter niet of de andere deelnemer meer of minder paddenstoelen in de velden vond dan jij.")

        Pr2_3 = ("Deze andere deelnemer moest tijdens het spelen van het spel ook aangeven hoe zeker hij of zij was van zijn of haar beslissing.\n"
        "Dit krijg jij ook te zien.\n\n"
        "Nadat je de beslissing en de zekerheid van de ander hebt gezien kun je jouw beslissing nog een keer aanpassen.")

        Pr2_4 = ("\n\n\n\n\n\n\n\nJe ziet eerst nogmaals je eigen beslissing en daarboven de beslissing en de zekerheid van de ander op de huidige oogstdag.\n"
        "Hun zekerheid kan LAAG, MEDIUM of HOOG zijn.\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n")

        Pr2_5 = ("\n\n\n\n\n\n\n\nDaarna heb je de mogelijkheid om jouw beslissing aan te passen op basis van deze nieuwe informatie.\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n")

        Pr2_6 = ("Op elke oogstdag zie je de informatie van steeds weer een andere eerdere deelnemer.\n\n"
        "Je gaat nu nog een aantal oefendagen spelen.\n"
        "Voor zowel je eerste als je tweede beslissing heb je 20 seconden om te antwoorden.\n\n"
        "Druk op ENTER om de oefening te starten en gebruik de pijlen om te antwoorden.")




        Pr2Dict = { "1": Pr2_1,
                      "2": Pr2_2,
                      "3": Pr2_3,
                      "4": Pr2_4,
                      "5": Pr2_5,
                      "6": Pr2_6
        }

        currentPr2 = "1"
      Begin Routine:
        # only run if phase is 2
        if practice_phase is not 2:
            loop_instrPrac2.finished = True
            continueRoutine = False

        event.clearEvents()

        progress_bar_size = (window_x*2)/18 * (int(currentPr2) + 9)
        progress_bar_pos = (-window_x) + (window_x*2)/18 * (int(currentPr2) + 9) / 2
        progress_text = "Instructies: " + str(int(currentPr2)+9) + "/18"
      End Routine:
        #win.getMovieFrame()
        #name = "instrPractice_{age}.png".format(age = currentPr)
        #win.saveMovieFrames(name)

        if (response_3.keys == "return" or response_3.keys == "num_enter") and int(currentPr2) == 6:
            currentPr2 = int(currentPr2) + 1
        elif response_3.keys == "right" and int(currentPr2) == 6:
            currentPr2 = int(currentPr2)
        elif response_3.keys == "right" and int(currentPr2) != 6:
            currentPr2 = int(currentPr2) + 1
        elif response_3.keys == "left":
            currentPr2 = int(currentPr2) - 1

        if currentPr2 == 0:
            currentPr2 = 1  # can't go lower than
        elif currentPr2 == 7:
            loop_instrPrac2.finished=True

        currentPr2 = str(currentPr2)
    TextComponent text_7
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Pr2Dict[currentPr2]
      wrapWidth = 1.2
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    ImageComponent blue_mushroom_6
      flipHoriz = True
      image = blue_mushroom.png
      ori = 350
      pos [set every repeat] = (window_x-0.3, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent red_mushroom_6
      image = red_mushroom.png
      ori = 10
      pos [set every repeat] = (window_x-0.2, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent progress_bar_fixed_5
      fillColor = white
      pos [set every repeat] = (0, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_x*2, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent progress_bar_5
      fillColor = green
      lineColor = green
      pos [set every repeat] = (progress_bar_pos, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (progress_bar_size, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent progress_IC_5
      color = black
      letterHeight = 0.02
      pos = (0, 0.48)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        $progress_text
    ImageComponent img_otherVillage
      image = img_otherVillage.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.885, 0.338)
      startVal [condition] = currentPr2 == "1"
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    ImageComponent screenshot1
      image = screenshot_SI1.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.643, 0.447)
      startVal [condition] = currentPr2 == "4"
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    ImageComponent screenshot2
      image = screenshot_SI2.png
      pos = (0, -0.15)
      saveStartStop = False
      size = (0.643, 0.447)
      startVal [condition] = currentPr2 == "5"
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  Routine Succes
    TextComponent text_6
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Succes!
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        trial_index = 0
  Routine SI
    CodeComponent pick_and_show_estimate
      Code Type = Both
      Begin JS Routine:
        // only run if phase is 2
        if (practice_phase !== 2) {
            continueRoutine = false;
        }

        // do not run if participant was too late at first estimation
        if (tooLate === 1){
            continueRoutine = false;
            estimate1 = 100; // set random estimate so program doesnt crash
        }

        event.clearEvents();
        document.body.style.cursor='auto';


        // retrieve confidence level to use in this trial, based on current nTotal and ratio
        if (startGame === 0) {
            if (trial_index === 0) {
                confidence_level = 1;
            } else if (trial_index === 1) {
                confidence_level = 2;
            } else {
                confidence_level = 3;
            }
            filtered_SI = wave1.filter(trial => trial['true_ratio']===true_ratio && trial['confidence']===confidence_level);
        } else {
            if (filler_trial === 0) {
                var confidence_index = nTotal_ratio_confidence.findIndex(
                    element => element.nTotal === nTotal && element.ratio === true_ratio
                );
                confidence_level = nTotal_ratio_confidence[confidence_index]["confidence"];
                // remove that index from dataframe, so it won't be used next time
                nTotal_ratio_confidence.splice(confidence_index, 1); // remove 1 element starting at pos i
                // filter wave1 data / social information based on current ratio and confidence level of peer to use
                filtered_SI = wave1.filter(trial => trial['true_ratio']===true_ratio && trial['confidence']===confidence_level);
            } else if (filler_trial === 1) {
                // filter wave1 data / social information based on current ratio only
                filtered_SI = wave1.filter(trial => trial['true_ratio']===true_ratio);
                if (true_ratio === 0 || true_ratio === 1){
                    confidence_level = 3; // makes more sense if peer is very confident in those obvious trials
                    filtered_SI = wave1.filter(trial => trial['true_ratio']===true_ratio && trial['confidence']===confidence_level);
                }
            }
        }



        // pick SI for which estimate is 15-18 percentage points in direction of true ratio.
        delta = Number.parseInt((estimate1 - (true_ratio * 100)));
        if (filler_trial === 1) {  // pick a peer estimate that is either super close or super far, in any direction
            close_far = SI_fillers[0]; // pick first element of shuffled list
            if (true_ratio === 0 || true_ratio === 1){
                close_far = 3; // otherwise not very believable
            }
            if (close_far === 3) {
                filtered_SI2 = filtered_SI.filter((trial) =>
                (trial['estimate'] > estimate1 - 3) && (trial['estimate'] < estimate1 + 3)
                );
                if (filtered_SI2.length === 0) {
                    close_far = 40;
                }
            }
            if (close_far === 40) {
                filtered_SI2 = filtered_SI.filter((trial) =>
                (trial['estimate'] > estimate1 + 40) || (trial['estimate'] < estimate1 - 40)
                );
                confidence_level = 1; // if difference between participant and peer is very large, it makes more sense to set peer confidence to 1.
            }
            filler_index = SI_fillers.findIndex(element => element === close_far);
            SI_fillers.splice(filler_index, 1); // remove used element from list
        } else if (delta > 0) {
            if (estimate1 < 15) {
                filtered_SI2 = filtered_SI.filter((trial) => trial['estimate'] === 0);
            } else {
                filtered_SI2 = filtered_SI.filter((trial) =>
                (trial['estimate'] > estimate1 - 19) && (trial['estimate'] < estimate1 - 14)
                );
            }
        } else if (delta < 0) {
            if (estimate1 > 85) {
                filtered_SI2 = filtered_SI.filter((trial) => trial['estimate'] === 100);
            } else {
                filtered_SI2 = filtered_SI.filter((trial) =>
                (trial['estimate'] > estimate1 + 14) && (trial['estimate'] < estimate1 + 19)
                );
            }
        } else if (delta === 0) { // any direction
            filtered_SI2 = filtered_SI.filter((trial) =>
            ((trial['estimate'] > estimate1 - 19) && (trial['estimate'] < estimate1 - 14)) ||
            ((trial['estimate'] > estimate1 + 14) && (trial['estimate'] < estimate1 + 19))
            );
        }

        // if no suitable SI could be found, just include all SI
        if (filtered_SI2.length === 0) {
            filtered_SI2 = filtered_SI;
        }


        // now randomly choose a peer estimate from filtered list
        random_index = Math.floor(Math.random() * filtered_SI2.length);
        peer_estimate = filtered_SI2[random_index]['estimate'];
        if (typeof(confidence_level) === "undefined") {
            confidence_level = filtered_SI2[random_index]['confidence'];
        }


        // define image to show about peers estimate
        if (confidence_level === 1) {
            peers_confidence_image = "low_peerConfidence.png";
        } else if (confidence_level === 2) {
            peers_confidence_image = "medium_peerConfidence.png";
        } else if (confidence_level === 3) {
            peers_confidence_image = "high_peerConfidence.png";
        }


        // parameters for peer estimate bar
        markerPos_peer = peer_estimate;
        markerPosition_peer = (markerPos_peer - 50) / 200; // in height units
        blueRectangle_peer_pos = ((- 0.25) + ((markerPos_peer / 200) / 2));
        blueRectangle_peer_size = markerPos_peer / 200;
        show_estimate_peer_text = Number.parseInt(markerPosition_peer*200+50);
      Begin Routine:
        event.clearEvents()

        # do not run if participant was too late at first estimation
        if tooLate == 1:
            continueRoutine = False
            estimate1 = 100 # set random estimate so program doesnt crash

        # retrieve confidence level to use in this trial, based on current nTotal and ratio and filer wave1 data
        if startGame == 0:
            confidence_level = trial_index + 1
            filtered_SI = [row for row in wave1 if row['true_ratio']==true_ratio and row['confidence']==confidence_level] # filter wave1 data / social information based on current ratio and confidence level
        elif filler_trial == 0:
            confidence_level = [row for row in nTotal_ratio_confidence if row['nTotal']==nTotal and row['ratio']==true_ratio][0]['confidence'] # pick first element with specific ratio and nTotal and return confidence level
            nTotal_ratio_confidence = [row for row in nTotal_ratio_confidence if not (row['nTotal']==nTotal and row['ratio']==true_ratio and row['confidence']==confidence_level)]  # remove element so it wont be used another time
            filtered_SI = [row for row in wave1 if row['true_ratio']==true_ratio and row['confidence']==confidence_level] # filter wave1 data / social information based on current ratio and confidence level
        elif filler_trial == 1:
            filtered_SI = [row for row in wave1 if row['true_ratio']==true_ratio]  # filter wave1 data / social information based on current ratio
            if true_ratio == 0 or true_ratio == 1:
                confidence_level = 3 # makes more sense if peer is very confidence in those obvious trials
                filtered_SI = [row for row in wave1 if row['true_ratio']==true_ratio and row['confidence']==confidence_level]

        # never show peer estimate of 0 or 100 (might not be believable in case participant saw both colors).
        filtered_SI = [row for row in filtered_SI if row['estimate']>0 and row['estimate']<100]

        # pick SI for which estimate is 15-18 percentage points in direction of true ratio.
        delta = int(estimate1 - true_ratio * 100);
        if filler_trial == 1: # pick a peer estimate that is either super close or super far, in any direction
            close_far = SI_fillers[0]; # pick first element of shuffled list
            if true_ratio == 0 or true_ratio == 1:
                close_far = 3 # to make it more believable
            if close_far == 3:
                filtered_SI2 = [row for row in filtered_SI if row['estimate'] > estimate1 - 3 and row['estimate'] < estimate1 + 3]
                if len(filtered_SI2) == 0:
                    close_far = 40;
            if close_far == 40:
                confidence_level = 1
                filtered_SI2 = [row for row in filtered_SI if (row['estimate'] < estimate1 - 40 or row['estimate'] > estimate1 + 40) and row['confidence'] == confidence_level]
            if true_ratio != 0 and true_ratio != 1:
                SI_fillers.remove(close_far)  # remove used filler trial from list
        elif delta > 0:
            if estimate1 < 16:
                filtered_SI2 = [row for row in filtered_SI if row['estimate'] == 1]
            else:
                filtered_SI2 = [row for row in filtered_SI if row['estimate'] > estimate1 - 19 and row['estimate'] < estimate1 - 14]
        elif delta < 0:
            if estimate1 > 84:
                filtered_SI2 = [row for row in filtered_SI if row['estimate'] == 99]
            else:
                filtered_SI2 = [row for row in filtered_SI if row['estimate'] < estimate1 + 19 and row['estimate'] > estimate1 + 14]
        elif delta == 0: # any direction
            filtered_SI2 = [row for row in filtered_SI if (row['estimate'] > estimate1 - 19 and row['estimate'] < estimate1 - 14) or (row['estimate'] < estimate1 + 19 and row['estimate'] > estimate1 + 14)]


        # if no suitable SI could be found, just include all SI
        if len(filtered_SI2) == 0:
            filtered_SI2 = filtered_SI

        # now randomly choose a peer estimate from filtered list
        random_index = int(random.randint(0,len(filtered_SI2),1))
        peer_estimate = filtered_SI2[random_index]['estimate']
        confidence_level = filtered_SI2[random_index]['confidence']

        # define image to show about peers confidence
        if confidence_level == 1:
            peers_confidence_image = "low_peerConfidence.png"
        elif confidence_level == 2:
            peers_confidence_image = "medium_peerConfidence.png"
        elif confidence_level == 3:
            peers_confidence_image = "high_peerConfidence.png"

        # parameters for visual peer estimate information
        markerPosition_peer = (peer_estimate - 50) / 100
    CodeComponent when_to_continue_2
      Code Type = Both
      Begin JS Routine:
        // do not run if participant was too late at first estimation
        if (tooLate === 1){
            continueRoutine = false;
        }

        event.clearEvents();
        document.body.style.cursor='auto';


        //estimation_slider_2.markerPos = estimation_slider_1.getRating(); // in slider units
        markerPos_2 = estimate1;
        markerPosition_2 = (markerPos_2 - 50) / 200; // in height units
        blueRectangle_2_pos = ((- 0.25) + ((markerPos_2 / 200) / 2));
        blueRectangle_2_size = markerPos_2 / 200;
        show_estimate1_text = Number.parseInt(markerPosition_2*200+50);


        //estimation_slider_2._opacity = 0;
        sliderfont = "Helvetica";

        //your_estimate1_text = ("Your part A decision was " + markerPos_2);


        //textbox parameters
        estimate2_textbox._multiline = false;
        estimate2_textbox._needPixiUpdate = true; // autofocus
        estimate2_textbox._needUpdate = true; // autofocus at repeat
      Begin Routine:
        # do not run if in first practice phase
        if practice_phase is not 2:
            continueRoutine = False

        # do not run if participant was too late at first estimation
        if tooLate == 1:
            continueRoutine = False

        kb = keyboard.Keyboard()
        kb.clearEvents()

        # initiate slider
        markerPosition_E1 = (estimate1-50) / 100
        markerPosition_E2 = -0.5
        tempRating = 0
        rating = 0
        ratingBeforePressed = 0
        tMove_start = t

        nKeys = 0
        submit = 0
        speed = 0

        # set alignment of text
        estimateOther.alignText='left'
        estimateSelf.alignText='left'

        # text about how to submit
        if startGame == 1:
            howToRespond = ""
        else:
            howToRespond = "Gebruik de pijlen om je beslissing aan te geven\nen druk op ENTER om je beslissing op te slaan."

        #pic_done = 0
      Each Frame:
        #if t > 1 and t < SI_delay and pic_done == 0 and confidence_level == 2:
        #    win.getMovieFrame()
        #    win.saveMovieFrames('estimation2_1.png')
        #    pic_done = 1
        #if t > SI_delay and pic_done == 1 and confidence_level == 2:
        #    win.getMovieFrame()
        #    win.saveMovieFrames('estimation2_2.png')
        #    pic_done = 2

        # need to manually check for escape, as our key checking will interfere with
        # Builder's escape check:
        events = event.getKeys()
        if 'escape' in events:
            core.quit()

        # check if participant is too late
        rt = t
        if rt > SI_delay + maxRT:
            tooLate = 1
            continueRoutine = False

        # ONLY START RECORDING KEYBOARD PRESSES AFTER SI_DELAY
        if t > SI_delay:

            # move slider colors along with response
            keys = kb.getKeys(['left', 'right', 'return', 'num_enter', 'o'], waitRelease = False, clear=False)
            keys_released = kb.getKeys(['left', 'right', 'return', 'num_enter', 'o'], waitRelease = True, clear=False)

            # everytime a new button is pressed in, I reset the speed with which the slider marker moves
            if len(keys) > nKeys: # new key pressed in
                nKeys = len(keys) # update nKeys
                tMove_start = t # reset speed reference point to start of new button press
                if startGame == 1:
                    howToRespond = "Druk op ENTER om op te slaan" # show pp can press ENTER as soon as there is a rating
            # check for sticky key: reset speed reference point and keyboard buffer at least every 2 secs
            if (t - tMove_start) > 2:
                kb.clearEvents() # if sticky key, reset keyboard buffer
                nKeys = 0
                tMove_start = t # reset speed reference point

            #released only shows sth when key is released, otherwise empty.
            #all button presses are stored in keys if clear is false.
            # button down if keys(end).duration == None and len(keys) == len(released) + 1
            if len(keys) > len(keys_released): # button pressed in, but not yet released
                if keys[len(keys)-1].duration is not None: # keys is longer than keys released because there is a sticky key, not because a key is actually pressed in
                    kb.clearEvents()
                    nKeys = 0
                    tMove_start = t # reset speed reference point
                else:
                    speed = min(t - tMove_start, 2) # the longer pressed in, the faster the slider moves, with a maximum speed after 2 sec
                    key = keys[len(keys)-1].name
                    if key == 'left':
                        tempRating -= math.exp(speed*1.5)-1 # -1 to make it move extra slow for short presses, but still fast for long presses.
                        submit = 1
                    elif key =='right':
                        tempRating += math.exp(speed*1.5)-1
                        submit = 1
                    elif (key == 'return' or key == 'num_enter') and submit == 1:
                        continueRoutine = False
            elif len(keys) == len(keys_released): # all buttons released
                # make sure rating moves at least 1 tick if it was shortly pressed and released (a very low ratinTemp might otherwise be rounded to a stepsize of 0)
                if tempRating > ratingBeforePressed:
                    tempRating = max(ratingBeforePressed+1, tempRating)
                elif tempRating < ratingBeforePressed:
                    tempRating = min(ratingBeforePressed-1, tempRating)
                ratingBeforePressed = tempRating

            # Make sure rating does not exceed limits of 0 and 100
            tempRating = min(tempRating, 100)
            tempRating = max(tempRating, 0)
            rating = round(tempRating)
            markerPosition_E2 = (rating - 50) / 100
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();

        // check if participant is too late
        if (t > 12){
            if (startGame===1){
                n_tooLate = n_tooLate + 1;
            }
            tooLate = 1;
            continueRoutine = false;
        }


        // check if estimate is within 1-100
        invalid = false;
        invalid_input = "";
        if (((estimate2_textbox.text.length > 0) && (estimate2_textbox.text !== " "))) {
            if ((isNaN(Number.parseInt(estimate2_textbox.text)))) {
                invalid = true;
                invalid_input = "*invalid input\n(needs to be numerical with range 1-100)";
            }
            if ((invalid === false)) {
                if (((Number.parseInt(estimate2_textbox.text) < 0) || (Number.parseInt(estimate2_textbox.text) > 100))) {
                    invalid = true;
                    invalid_input = "*invalid input\n(needs to be numerical with range 1-100)";
                }
            }
        }


        // check if rating has been completed:
        pressENTER = "";
        if ((((estimate2_textbox.text.length > 0) && (estimate2_textbox.text !== " ")) && (invalid === false))) {
            pressENTER = "Press ENTER to submit your decision";
            if (_pj.in_es6("return", keys) || _pj.in_es6("num_enter", keys)){
                estimate2 = Number.parseInt(estimate2_textbox.text);
                estimate2_rt = t-2;
                continueRoutine = false;
            }
        }



        // WHEN ACTUAL SLIDER
        //if ((estimation_slider_2.markerPos !== undefined)) {
        //    markerPos_2 = estimation_slider_2.markerPos;
        //    markerPosition_2 = (markerPos_2 - 50) / 200;
        //    blueRectangle_2_pos = ((- 0.25) + ((markerPos_2 / 200) / 2));
        //    blueRectangle_2_size = markerPos_2 / 200;
        //    show_estimate_2_text = Number.parseInt(markerPosition_2*200+50);
        //}


        //rating_completed = 0;
        //if ((estimation_slider_2.getRating() !== undefined)) {
        //    rating_completed = 1;
        //}

        //if (((_pj.in_es6("return", keys) || _pj.in_es6("num_enter", keys)) && (rating_completed === 1))) {
        //    continueRoutine = false;
        //}
      End JS Routine:
        if (tooLate === 0){
            deviance = estimate2 - true_ratio * 100;
            abs_deviance = Math.abs(deviance);
        }

        if ((startGame === 1)) {
            if (tooLate === 0){
                list_deviance.push(abs_deviance);
                psychoJS.experiment.addData("estimation2.rating", estimate2);
                psychoJS.experiment.addData("estimation2.rt", estimate2_rt); // slider appears after 2 secs
                psychoJS.experiment.addData("estimate_peer", peer_estimate);
                psychoJS.experiment.addData("confidence_peer", confidence_level);
            }
            // nRemaining is nRemaining across all, so nRemaining===0 is the very very last trial.
            if ((trials_parameters._snapshots[trial_index]["nRemaining"] === 0)) {
                sample_deviance = list_deviance[Math.floor(Math.random() * list_deviance.length)];
                bonus = (1.5 - (sample_deviance * 0.04));
                if ((bonus < 0)) {
                    bonus = 0;
                }
                expInfo["bonus"] = bonus;
            }
        }

        trial_index = trial_index + 1
      End Routine:
        #win.getMovieFrame()
        #win.saveMovieFrames('response.png')
        kb.clearEvents()

        if startGame == 1:
            estimate2 = int(rating)
            # performance
            if tooLate == 0:
                estimate2_rt = rt-SI_delay
                deviance = estimate2 - true_ratio*100
                abs_deviance = abs(deviance)
            elif tooLate == 1:
                estimate2_rt = []

            # only save data during actual task, not practice
            loop_trials.addData('estimation2.rating', estimate2)
            loop_trials.addData('estimation2.rt', estimate2_rt)
            if tooLate == 0:
                list_deviance.append(abs_deviance)
            loop_trials.addData('estimate_peer', peer_estimate)
            loop_trials.addData('confidence_peer', confidence_level)
            if loop_trials.nRemaining == 0:
                list_deviance = np.array(list_deviance)
                sample_deviance = round(sample(list(list_deviance),1)[0])
                bonus = 1.50 - sample_deviance*0.04
                if bonus < 0:
                    bonus = 0 # never lower than
                expInfo['bonus'] = bonus


        trial_index += 1
    TextComponent how_many_mushrooms_2
      letterHeight = 0.032
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = SI_delay
      text = Hoeveel blauwe en rode zakken moeten vandaag worden meegenomen naar het bos?
      units = height
      wrapWidth = 0.8
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    PolygonComponent white_rectangle_peer
      fillColor = white
      lineWidth = 0.5
      pos = (0, 0.02)
      saveStartStop = False
      shape = rectangle
      size = (1, 0.04)
      startVal [time (s)] = 0
      units = height
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    ImageComponent peer_confidence_rating
      image [set every repeat] = $peers_confidence_image
      pos [set every repeat] = (markerPosition_peer, 0.21)
      saveStartStop = False
      size = (0.29, 0.21)
      startVal [time (s)] = 0.0
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    PolygonComponent blue_box_peer
      fillColor = dodgerblue
      lineColor = dodgerblue
      pos [set every repeat] = [markerPosition_peer-0.026, 0.065]
      saveStartStop = False
      shape = rectangle
      size = [0.06, 0.04]
      startVal [time (s)] = 0
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    PolygonComponent sliderMarker_peer
      fillColor = black
      lineColor = black
      pos [set every repeat] = [markerPosition_peer, 0.02]
      saveStartStop = False
      shape = rectangle
      size = (0.008, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent showEstimate_peer
      letterHeight = 0.035
      pos [set every repeat] = [markerPosition_peer-0.026, 0.065]
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $peer_estimate
      units = height
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    TextComponent slider_text0_peer
      disabled = True
      letterHeight = 0.03
      pos = (-0.25, -0.02)
      saveStartStop = False
      startVal [time (s)] = 0
      text = 0
      units = height
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    TextComponent slider_text100_peer
      disabled = True
      letterHeight = 0.03
      pos = (0.25, -0.02)
      saveStartStop = False
      startVal [time (s)] = 0
      text = 100
      units = height
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    PolygonComponent white_rectangle_2
      fillColor = white
      lineWidth = 0.5
      pos = (0, -0.18)
      saveStartStop = False
      shape = rectangle
      size = (1, 0.04)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent blue_box_E1
      fillColor = dodgerblue
      lineColor = dodgerblue
      pos [set every repeat] = [markerPosition_E1-0.026, -0.135]
      saveStartStop = False
      shape = rectangle
      size = [0.06, 0.04]
      startVal [time (s)] = 0
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    TextComponent showEstimate_E1
      letterHeight = 0.035
      pos [set every frame] = [markerPosition_E1-0.026, -0.135]
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $int(estimate1)
      units = height
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    PolygonComponent sliderMarker_E1
      fillColor = black
      lineColor = black
      pos [set every repeat] = [markerPosition_E1, -0.18]
      saveStartStop = False
      shape = rectangle
      size = (0.008, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blue_box_E2
      fillColor = blue
      lineColor = blue
      pos [set every frame] = [markerPosition_E2-0.026, -0.135]
      saveStartStop = False
      shape = rectangle
      size = [0.06, 0.04]
      startVal [time (s)] = SI_delay
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    TextComponent showEstimate_E2
      letterHeight = 0.035
      pos [set every frame] = [markerPosition_E2-0.026, -0.135]
      saveStartStop = False
      startVal [time (s)] = SI_delay
      text [set every frame] = $int(rating)
      units = height
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    PolygonComponent sliderMarker_E2
      fillColor = black
      lineColor = black
      pos [set every frame] = [markerPosition_E2, -0.18]
      saveStartStop = False
      shape = rectangle
      size = (0.008, 0.05)
      startVal [time (s)] = SI_delay
      units = height
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    TextComponent slider_text0_2
      disabled = True
      letterHeight = 0.03
      pos = (-0.25, -0.22)
      saveStartStop = False
      startVal [time (s)] = 0
      text = 0
      units = height
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    TextComponent slider_text100_2
      disabled = True
      letterHeight = 0.03
      pos = (0.25, -0.22)
      saveStartStop = False
      startVal [time (s)] = 0
      text = 100
      units = height
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    TextComponent enterToRespond
      letterHeight = 0.032
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = SI_delay
      text [set every frame] = $howToRespond
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    PolygonComponent red_box_peer
      fillColor = lightcoral
      lineColor = lightcoral
      pos [set every repeat] = [markerPosition_peer+0.026, -0.025]
      saveStartStop = False
      shape = rectangle
      size = [0.06, 0.04]
      startVal [time (s)] = 0
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    TextComponent showEstimate_red_peer
      letterHeight = 0.035
      pos [set every repeat] = [markerPosition_peer+0.026, -0.025]
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $100-peer_estimate
      units = height
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    PolygonComponent red_box_E1
      fillColor = lightcoral
      lineColor = lightcoral
      pos [set every repeat] = [markerPosition_E1+0.026, -0.225]
      saveStartStop = False
      shape = rectangle
      size = [0.06, 0.04]
      startVal [time (s)] = 0
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    TextComponent showEstimate_red_E1
      letterHeight = 0.035
      pos [set every frame] = [markerPosition_E1+0.026, -0.225]
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $100-int(estimate1)
      units = height
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    PolygonComponent red_box_E2
      fillColor = red
      lineColor = red
      pos [set every frame] = [markerPosition_E2+0.026, -0.225]
      saveStartStop = False
      shape = rectangle
      size = [0.06, 0.04]
      startVal [time (s)] = SI_delay
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    TextComponent showEstimate_red_E2
      letterHeight = 0.035
      pos [set every frame] = [markerPosition_E2+0.026, -0.225]
      saveStartStop = False
      startVal [time (s)] = SI_delay
      text [set every frame] = $100-int(rating)
      units = height
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    TextComponent estimateOther
      letterHeight = 0.03
      pos = (-0.35, 0.02)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Beslissing van ander:
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    TextComponent estimateSelf
      letterHeight = 0.03
      pos = (-0.35, -0.18)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Beslissing van jou:
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  Routine firstEstimation
    CodeComponent when_to_continue_3
      Code Type = Both
      Begin JS Routine:
        event.clearEvents();
        document.body.style.cursor='auto';

        estimation_slider.markerPos = 50; // in slider units
        markerPosition = 0; // in height units
        blueRectangle_pos = -0.125;
        blueRectangle_size = 0.25;
        show_estimate_text = " ";


        estimation_slider._opacity = 0;
        confidence._bold = false;
        sliderfont = "Helvetica";
      Begin Routine:
        kb = keyboard.Keyboard()
        kb.clearEvents()

        # initiate slider
        markerPosition = -0.5
        tempRating = 0
        rating = 0
        ratingBeforePressed = 0
        tMove_start = t

        nKeys = 0
        submit = 0
        tooLate = 0
        speed = 0

        # text about how to submit
        if startGame == 1:
            howToRespond = ""
        else:
            howToRespond = "Gebruik de pijlen om je beslissing aan te geven\nen druk op ENTER om je beslissing op te slaan."

        #pic_done = 0
      Each Frame:
        #if pic_done == 0:
        #    win.getMovieFrame()
        #    win.saveMovieFrames('estimation1.png')
        #    pic_done = 1

        # need to manually check for escape, as our key checking will interfere with
        # Builder's escape check:
        events = event.getKeys()
        if 'escape' in events:
            core.quit()

        # check if participant is too late
        rt = t
        if rt > maxRT:
            tooLate = 1
            continueRoutine = False

        # move slider colors along with response
        keys = kb.getKeys(['left', 'right', 'return', 'num_enter', 'o'], waitRelease = False, clear=False)
        keys_released = kb.getKeys(['left', 'right', 'return', 'num_enter', 'o'], waitRelease = True, clear=False)


        # everytime a new button is pressed in, I reset the acceleration with which the slider marker moves
        if len(keys) > nKeys: # new key pressed in
            nKeys = len(keys) # update nKeys
            tMove_start = t # reset speed reference point to start of new button press
            if startGame == 1:
                howToRespond = "Druk op ENTER om op te slaan" # show pp can press ENTER as soon as there is a rating
        # check for sticky key: reset speed reference point and keyboard buffer at least every 2 secs
        if (t - tMove_start) > 2:
            kb.clearEvents() # if sticky key, reset keyboard buffer
            nKeys = 0
            tMove_start = t # reset speed reference point

        # sticky key detection: if the same button with duration None is in the list of all key presses more than once
        #if len(keys):
        #    key = keys[len(keys)-1].name
        #    if key == 'o':
        #        for x in keys:
        #            print("fout all: ", x.name, x.duration)
        #        for y in keys_released:
        #            print("fout released: ", y.name, y.duration)
        #        stickyDetection = []
        #        for x in keys:
        #            if x.duration is None:
        #                stickyDetection.append(x.name)
        #                contains_duplicates = len(stickyDetection) != len(set(stickyDetection)) # a set only keeps unique elements
        #                if contains_duplicates:
        #                    print("should be empty")
        #                    kb.clearEvents()
        #                    tMove_start = t
        #                    keys = kb.getKeys(['left', 'right', 'return', 'num_enter', 'o'], waitRelease = False, clear=False)
        #                    for x in keys:
        #                        print("should be empty: ", x.name, x.duration)

        #released only shows sth when key is released, otherwise empty.
        #all button presses are stored in keys if clear is false.
        # button down if keys(end).duration == None and len(keys) == len(released) + 1
        if len(keys) > len(keys_released): # button pressed in, but not yet released
            if keys[len(keys)-1].duration is not None: # keys is longer than keys released because there is a sticky key, not because a key is actually pressed in
                kb.clearEvents()
                nKeys = 0
                tMove_start = t # reset speed reference point
            else:
                speed = min(t - tMove_start, 2) # the longer pressed in, the faster the slider moves, with a maximum speed after 2 sec
                key = keys[len(keys)-1].name
                if key == 'left':
                    tempRating -= math.exp(speed*1.5)-1 # -1 to make it move extra slow for short presses, but still fast for long presses.
                    submit = 1
                elif key =='right':
                    tempRating += math.exp(speed*1.5)-1
                    submit = 1
                elif (key == 'return' or key == 'num_enter') and submit == 1:
                    continueRoutine = False
        elif len(keys) == len(keys_released): # all buttons released
            # make sure rating moves at least 1 tick if it was shortly pressed and released (a very low ratinTemp might otherwise be rounded to a stepsize of 0)
            if tempRating > ratingBeforePressed:
                tempRating = max(ratingBeforePressed+1, tempRating)
            elif tempRating < ratingBeforePressed:
                tempRating = min(ratingBeforePressed-1, tempRating)
            ratingBeforePressed = tempRating

        # Make sure rating does not exceed limits of 0 and 100
        tempRating = min(tempRating, 100)
        tempRating = max(tempRating, 0)
        rating = round(tempRating)
        markerPosition = (rating - 50) / 100
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();


        if ((estimation_slider.markerPos !== undefined)) {
            markerPos = estimation_slider.markerPos;
            markerPosition = (markerPos - 50) / 200;
            blueRectangle_pos = ((- 0.25) + ((markerPos / 200) / 2));
            blueRectangle_size = markerPos / 200;
            show_estimate_text = Number.parseInt(markerPosition*200+50);
        }


        rating_completed = 0;
        if ((estimation_slider.getRating() !== undefined)) {
            rating_completed = 1;
            if ((confidence.getRating() !== undefined)) {
                rating_completed = 2;
            }
        }
        if (((_pj.in_es6("return", keys) || _pj.in_es6("num_enter", keys)) && (rating_completed === 2))) {
            estimation_slider.markerPos = undefined;
            markerPosition = 0;
            show_estimate_text = " ";
            blueRectangle_pos = - 0.125;
            blueRectangle_size = 0.25;
            continueRoutine = false;
        }
      End JS Experiment:
        bonus = (1.5 - (abs_deviance * 0.04));
      End JS Routine:
        deviance = Number.parseInt((estimation_slider.getRating() - (true_ratio * 100)));
        abs_deviance = Math.abs(deviance);
        if ((startGame === 1)) {
            for (var iConfidence = 0, _pj_a = confidence.getRating(); (iConfidence < _pj_a); iConfidence += 1) {
                list_deviance.push(abs_deviance);
            }
            psychoJS.experiment.addData("cross_hair.ITI", crosshair_ITI);
            psychoJS.experiment.addData("seen_ratio", seen_ratio);
            psychoJS.experiment.addData("nMushrooms", String(nObservations));
            psychoJS.experiment.addData("nBlue", String(blue));
            psychoJS.experiment.addData("nRed", String(red));
            psychoJS.experiment.addData("estimation.rating", estimation_slider.getRating());
            psychoJS.experiment.addData("estimation.rt", estimation_slider.getRT());
            psychoJS.experiment.addData("confidence.response", confidence.getRating());
            psychoJS.experiment.addData("confidence.rt", confidence.getRT());
            // nRemaining is nRemaining across all, so nRemaining===0 is the very very last trial.
            if ((trials_parameters._snapshots[trial_index]["nRemaining"] === 0)) {
                sample_deviance = list_deviance[Math.floor(Math.random() * list_deviance.length)];
                bonus = (1.5 - (sample_deviance * 0.04));
                if ((bonus < 0)) {
                    bonus = 0;
                }
                expInfo["bonus"] = bonus;
            }
        }

        trial_index = trial_index + 1
      End Routine:
        #win.getMovieFrame()
        #win.saveMovieFrames('response.png')
        kb.clearEvents()

        # performance
        estimate1 = int(rating)
        if tooLate == 0:
            estimate1_rt = rt
            deviance = estimate1 - true_ratio*100
            abs_deviance = abs(deviance)
        elif tooLate == 1:
            estimate1_rt = []

        # save data
        if startGame == 1:
            loop_trials.addData('cross_hair.ITI', crosshair_ITI)
            loop_trials.addData('seen_ratio', seen_ratio)
            loop_trials.addData('nMushrooms', " ".join(map(str, nObservations)))
            loop_trials.addData('nBlue', " ".join(map(str, blue)))
            loop_trials.addData('nRed', " ".join(map(str, red)))
            loop_trials.addData('estimation1.rating', estimate1)
            loop_trials.addData('estimation1.rt', estimate1_rt)
            if tooLate == 0:
                list_deviance.append(abs_deviance)


        win.mouseVisible = False
    TextComponent how_many_mushrooms_3
      letterHeight = 0.032
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Hoeveel blauwe en rode zakken moeten vandaag worden meegenomen naar het bos?
      units = height
      wrapWidth = 0.8
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    PolygonComponent white_rectangle
      fillColor = white
      lineWidth = 0.5
      pos = (0, -0.18)
      saveStartStop = False
      shape = rectangle
      size = (1, 0.04)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blue_box
      fillColor = blue
      lineColor = blue
      pos [set every frame] = [markerPosition-0.026, -0.135]
      saveStartStop = False
      shape = rectangle
      size = [0.06, 0.04]
      startVal [time (s)] = 0
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    TextComponent showEstimate
      color = White
      letterHeight = 0.035
      pos [set every frame] = [markerPosition-0.026, -0.135]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $int(rating)
      units = height
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    PolygonComponent sliderMarker
      fillColor = black
      lineColor = black
      pos [set every frame] = [markerPosition, -0.18]
      saveStartStop = False
      shape = rectangle
      size = (0.008, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent slider_text0
      disabled = True
      letterHeight = 0.03
      pos = (-0.25, -0.22)
      saveStartStop = False
      startVal [time (s)] = 0
      text = 0
      units = height
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    TextComponent slider_text100
      disabled = True
      letterHeight = 0.03
      pos = (0.25, -0.22)
      saveStartStop = False
      startVal [time (s)] = 0
      text = 100
      units = height
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    PolygonComponent red_box
      fillColor = red
      lineColor = red
      pos [set every frame] = [markerPosition+0.026, -0.225]
      saveStartStop = False
      shape = rectangle
      size = [0.06, 0.04]
      startVal [time (s)] = 0
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    TextComponent showEstimate_red
      color = White
      letterHeight = 0.035
      pos [set every frame] = [markerPosition+0.026, -0.225]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $100-int(rating)
      units = height
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    TextComponent text_8
      letterHeight = 0.032
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $howToRespond
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  Routine instructions_end
    TextComponent bonus_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Goed gedaan!

        Dit is het einde van het oefenblok.

        Vraag nu aan de onderzoeker om je verdere instructies te geven.
    KeyboardComponent s_to_end
      allowedKeys = 's'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent blue_mushroom_4
      flipHoriz = True
      image = blue_mushroom.png
      ori = 350
      pos [set every repeat] = (window_x-0.3, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent red_mushroom_4
      image = red_mushroom.png
      ori = 10
      pos [set every repeat] = (window_x-0.2, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine confidenceRating
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        # do not run if participant was too late at first estimation
        if tooLate == 1:
            continueRoutine = False

        # initiate mouse
        mouse = event.Mouse(win=win)
        win.mouseVisible = True
        mouse.setPos(newPos=(0,-0.3))

        #pic_done = 0
      Each Frame:
        #if t > 0.5 and pic_done == 0:
        #    win.getMovieFrame()
        #    win.saveMovieFrames('confidenceRating.png')
        #    pic_done = 1
      End Routine:
        if startGame == 1 and tooLate == 0:
            loop_trials.addData('confidence_own.rating', confidence_rating.getRating())
            loop_trials.addData('confidence_own.rt', t)
        win.mouseVisible = False
        core.wait(0.5)
    SliderComponent confidence_rating
      color = White
      fillColor = Black
      forceEndRoutine = True
      granularity = 1
      labels = ('laag', 'medium', 'hoog')
      letterHeight = 0.025
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3)
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    TextComponent confidence_text
      letterHeight = 0.032
      pos = (0, 0.07)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Hoe zeker was je van je beslissing?
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    TextComponent text_mouse
      letterHeight = 0.032
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Gebruik de muis om je antwoord aan te geven
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Flow
  Routine setup
  Routine start_slide
  Routine import_wave1_data
  LoopInitiator practice_phases loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine set_practicePhase
    LoopInitiator loop_instrPrac loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 200
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      Routine instrPrac
    LoopTerminator loop_instrPrac
    LoopInitiator loop_instrPrac2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 200
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      Routine instrPrac2
    LoopTerminator loop_instrPrac2
    Routine Succes
    LoopInitiator loop_prTrials loopType="TrialHandler"
      Selected rows = $selected_practice_trials
      conditionsFile = trial_structure_prac.csv
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('nTotal', 5), ('trueRatio', 0.125), ('fillerTrial', 0)]),
        OrderedDict([('nTotal', 5), ('trueRatio', 0.375), ('fillerTrial', 0)]),
        OrderedDict([('nTotal', 5), ('trueRatio', 0.625), ('fillerTrial', 0)]),
        OrderedDict([('nTotal', 5), ('trueRatio', 0.625), ('fillerTrial', 0)]),
        OrderedDict([('nTotal', 5), ('trueRatio', 0.625), ('fillerTrial', 0)]),
        OrderedDict([('nTotal', 5), ('trueRatio', 0.875), ('fillerTrial', 0)]),
        OrderedDict([('nTotal', 45), ('trueRatio', 0.125), ('fillerTrial', 0)]),
        OrderedDict([('nTotal', 45), ('trueRatio', 0.375), ('fillerTrial', 0)]),
        OrderedDict([('nTotal', 45), ('trueRatio', 0.625), ('fillerTrial', 0)]),
        OrderedDict([('nTotal', 45), ('trueRatio', 0.625), ('fillerTrial', 0)]),
        OrderedDict([('nTotal', 45), ('trueRatio', 0.625), ('fillerTrial', 0)]),
        OrderedDict([('nTotal', 45), ('trueRatio', 0.875), ('fillerTrial', 0)]),
        OrderedDict([('nTotal', 5), ('trueRatio', 0.5), ('fillerTrial', 1)]),
        OrderedDict([('nTotal', 5), ('trueRatio', 0.875), ('fillerTrial', 1)]),
        OrderedDict([('nTotal', 45), ('trueRatio', 1.0), ('fillerTrial', 1)])]
      Routine setupSamples
      Routine crossHair
      LoopInitiator loop_prSamples loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 5
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        Routine mushroomSample
        Routine ISI
      LoopTerminator loop_prSamples
      Routine firstEstimation
      Routine confidenceRating
      Routine ISI
      Routine SI
      Routine tooLate_feedback
    LoopTerminator loop_prTrials
    LoopInitiator loop_instrBonus loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 200
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      Routine instrBonus
    LoopTerminator loop_instrBonus
  LoopTerminator practice_phases
  Routine Succes
  LoopInitiator loop_trials loopType="TrialHandler"
    Selected rows = $selected_trials
    conditionsFile = trial_structure_prac.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('nTotal', 5), ('trueRatio', 0.125), ('fillerTrial', 0)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.375), ('fillerTrial', 0)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.625), ('fillerTrial', 0)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.625), ('fillerTrial', 0)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.625), ('fillerTrial', 0)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.875), ('fillerTrial', 0)]),
      OrderedDict([('nTotal', 45), ('trueRatio', 0.125), ('fillerTrial', 0)]),
      OrderedDict([('nTotal', 45), ('trueRatio', 0.375), ('fillerTrial', 0)]),
      OrderedDict([('nTotal', 45), ('trueRatio', 0.625), ('fillerTrial', 0)]),
      OrderedDict([('nTotal', 45), ('trueRatio', 0.625), ('fillerTrial', 0)]),
      OrderedDict([('nTotal', 45), ('trueRatio', 0.625), ('fillerTrial', 0)]),
      OrderedDict([('nTotal', 45), ('trueRatio', 0.875), ('fillerTrial', 0)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.5), ('fillerTrial', 1)]),
      OrderedDict([('nTotal', 5), ('trueRatio', 0.875), ('fillerTrial', 1)]),
      OrderedDict([('nTotal', 45), ('trueRatio', 1.0), ('fillerTrial', 1)])]
    Routine setupSamples
    Routine crossHair
    LoopInitiator loop_samples loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 5
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      Routine mushroomSample
      Routine ISI
    LoopTerminator loop_samples
    Routine firstEstimation
    Routine confidenceRating
    Routine ISI
    Routine SI
    Routine tooLate_feedback
  LoopTerminator loop_trials
  Routine instructions_end
