PsychoPy2experiment version="2021.2.3"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=32B6D3BE
  Data filename = u'../../../raw_data/sub-%03d/mushroom/sub-%03d_task-mushroom_run-%s_beh' % (int(expInfo['participant']), int(expInfo['participant']), expInfo['run'])
  Experiment info = {'participant': '', 'run': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['low_peerConfidence.png', 'medium_peerConfidence.png', 'high_peerConfidence.png', 'wave1_input_confidence.csv']
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1504, 1003]
  expName = mushroomTask
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Routines
  Routine setupSamples
    CodeComponent set_up_samples
      Code Type = Both
      Begin JS Experiment:
        var trials_parameters;
      Begin JS Routine:
        if (startGame === 0) {
            trials_parameters = loop_prTrials;
            loop_prTrials._autoLog = false;
        } else if (startGame === 1) {
            trials_parameters = loop_trials;
            loop_trials._autoLog = false;
        }

        thisIndex = trials_parameters._snapshots[trial_index]["thisIndex"];
        nTotal = trials_parameters._trialList[thisIndex]["nTotal"];
        true_ratio = trials_parameters._trialList[thisIndex]["trueRatio"];
        given_ratio = trials_parameters._trialList[thisIndex]["trueRatio"];
        filler_trial = trials_parameters._trialList[thisIndex]["fillerTrial"];

        nSamples = 5;

        // create matrix that specifies the number of observations per sample
        nObservations = function () {
            var _pj_a = [], _pj_b = range(nSamples, 0);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var iSample = _pj_b[_pj_c];
                _pj_a.push(0);
            }
            return _pj_a;
        }
        .call(this);

        nLeft = nTotal;
        for (var iSample = 1, _pj_a = (nSamples + 1); (iSample < _pj_a); iSample += 1) {
            var xmin = ((- 1) * (((nSamples - iSample) * 9) - nLeft));
            xmin = Math.max(1, xmin);
            var xmax = ((- 1) * (((nSamples - iSample) * 1) - nLeft));
            xmax = Math.min(9, xmax);
            var x = randint(xmin, xmax + 1);
            nLeft = (nLeft - x);
            nObservations[(iSample - 1)] = x;
        }


        // Now create the randomized list with the actual observations to show
        nBlue = round((given_ratio * nTotal));
        seen_ratio = nBlue / nTotal;
        nRed = (nTotal - nBlue);
        itemList = ["blue", "red"];

        var repeat = (values, counts) => values.flatMap((v, i) => Array(counts[i]).fill(v)),
            itemList = repeat(itemList,[nBlue, nRed])
        shuffle(itemList);

        // Based on the shuffled list with 'red' and 'blue', define how many red's and blue's are in each sample.
        start = 0;
        blue = function () {
            var _pj_a = [], _pj_b = range(nSamples);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var iSample = _pj_b[_pj_c];
                _pj_a.push(0);
            }
            return _pj_a;
        }
        .call(this);

        red = function () {
            var _pj_a = [], _pj_b = range(nSamples);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var iSample = _pj_b[_pj_c];
                _pj_a.push(0);
            }
            return _pj_a;
        }
        .call(this);
        for (var iSample = 0, _pj_a = nSamples; (iSample < _pj_a); iSample += 1) {
            blue[iSample] = itemList.slice(start, (start + nObservations[iSample])).filter(element  => element == "blue").length
            red[iSample] = itemList.slice(start, (start + nObservations[iSample])).filter(element  => element == "red").length
            start = (start + nObservations[iSample]);
        }
      Begin Routine:
        # retrieved from file
        nTotal = thisLoop_trial['nTotal']
        true_ratio = thisLoop_trial['trueRatio']
        given_ratio = thisLoop_trial['trueRatio']
        confidence_level = thisLoop_trial['confidence']
        filler_trial = thisLoop_trial['fillerTrial']
        nSamples = 5

        # create matrix that specifies the number of observations per sample
        nObservations = [0 for iSample in range(nSamples)]
        nLeft = nTotal
        for iSample in range(1,nSamples+1): # +1 to correct for 0-indexing in Python
            xmin = -1*((nSamples-iSample)*9-nLeft)  # nLeft-x <= (nSamples-iSample)x9, with 5 for number of total samples, 9 for max observations per sample in general.
            xmin = max(1,xmin) # xmin is either 1, or a higher minimum based on how many observations and samples still need to be shown
            xmax = -1*((nSamples-iSample)*1-nLeft) # nLeft-x >= (nSamples-iSample)x1, with 5 for number of total samples, 1 for min observations per sample in general.
            xmax = min(9,xmax) # xmax is either 9, or a lower maximum based on how many observations and samples still need to be shown
            toChooseFrom = [*range(xmin, xmax+1)] # +1 because python reads 'up to but not including xmax'
            x = sample(toChooseFrom,1)[0] # sample returns list; convert list to integer
            nLeft = nLeft - x
            nObservations[iSample-1] = x

        # Now create the randomized list with the actual observations to show
        nBlue = round(given_ratio * nTotal)
        seen_ratio = nBlue / nTotal
        nRed = nTotal - nBlue
        itemList = np.array(["blue", "red"])
        itemList = np.repeat(itemList, [nBlue, nRed])
        random.shuffle(itemList)

        # Based on the shuffled list with 'red' and 'blue', define how many red's and blue's are in each sample.
        start = 0
        blue = [0 for iSample in range(nSamples)]
        red = [0 for iSample in range(nSamples)]
        for iSample in range(nSamples):
          blue[iSample] = sum(itemList[start:(start+nObservations[iSample])]=="blue")
          red[iSample] = sum(itemList[start:(start+nObservations[iSample])]=="red")
          start = start + nObservations[iSample]
      End JS Routine:
        sample_index = 0;
      End Routine:
        sample_index = 0

        # initialize start timings of fieldsamples
        Tstart_field1 = []
        Tstart_field2 = []
        Tstart_field3 = []
        Tstart_field4 = []
        Tstart_field5 = []
  Routine crossHair
    TextComponent cross_hair
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = crosshair_ITI
      text = +
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        crosshair_ITI = Math.floor(((Math.random() * (6.1 - 4.0)) + 4.0)* 10) / 10;
        document.body.style.cursor='none';
      Begin Routine:
        #crosshair_ITI = round(random.random() * (2.0 - 1.5) + 1.5, 1)
        crosshair_ITI = round(random.random() * (6.0 - 4.0) + 4.0, 1)

        win.mouseVisible = False
      Each Frame:
        if frameN == 1:
            Tstart_crosshair = triggerClock.getTime()
      End Routine:
        Tend_crosshair = triggerClock.getTime()
  Routine mushroomSample
    TextComponent text_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        S = ["blue", "red"];
        var repeat = (values, counts) => values.flatMap((v, i) => Array(counts[i]).fill(v)),
            S = repeat(S,[blue[sample_index], red[sample_index]])

        ok = 0;
        while ((ok === 0)) {
            var coor_x = [];
            while(coor_x.length < nObservations[sample_index]){
                var r =((Math.random() * (aperture_size - (- aperture_size))) + (- aperture_size));
                if(coor_x.indexOf(r) === -1) coor_x.push(r);
            }
            var coor_y = [];
            while(coor_y.length < nObservations[sample_index]){
                var r =((Math.random() * (aperture_size - (- aperture_size))) + (- aperture_size));
                if(coor_y.indexOf(r) === -1) coor_y.push(r);
            }
            var diff_x = allAbsDifferences(coor_x, coor_x.length);
            var diff_y = allAbsDifferences(coor_y, coor_y.length);
            var match;
            var tooClose_xy = [];
            for(var el = 0; el < diff_x.length; el++) {
                match = 0;
                if (diff_x[el] <= (mushroom_size * 0.9) && diff_y[el] <= (mushroom_size * 0.9)) {
                    match = 1;
                }
                tooClose_xy.push(match);
            }
            if (tooClose_xy.every(x => x == 0)) {
                ok = 1;
            }
        }

        if ((red[sample_index] > 0)) {
            red_mushrooms = function () {
            var _pj_a = [], _pj_b = range(red[sample_index]);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(new visual.ImageStim({
                    win: psychoJS.window,
                    name: "red_mushrooms", image: "red_mushroom.png",
                    pos: [coor_x[i], coor_y[i]], size: [mushroom_size, mushroom_size],
                    }));
            }
            return _pj_a;
            }
            red_mushrooms = red_mushrooms();
            for (var i, _pj_c = 0, _pj_a = red_mushrooms, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                i.setAutoDraw(true);
            }
        }


        if ((blue[sample_index] > 0)) {
            blue_mushrooms = function () {
            var _pj_a = [], _pj_b = range(blue[sample_index], red[sample_index]);
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var i = _pj_b[_pj_c];
                _pj_a.push(new visual.ImageStim({
                    win: psychoJS.window,
                    name: "blue_mushrooms", image: "blue_mushroom.png",
                    pos: [coor_x[i], coor_y[i]], size: [mushroom_size, mushroom_size],
                    }));
            }
            return _pj_a;
            }
            blue_mushrooms = blue_mushrooms();
            for (var i, _pj_c = 0, _pj_a = blue_mushrooms, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                i.draw();
            }
        }
      Begin Routine:
        # At the start of each sample, create a matrix with x and y coordinates of stimuli on screen
        S = np.array(["blue", "red"])
        # item = thisLoop_sample['item']
        S = np.repeat(S, [blue[sample_index], red[sample_index]])
        ok = 0
        while ok == 0:
            coor_x = np.array(random.uniform(-aperture_size,aperture_size, nObservations[sample_index]))
            coor_y = np.array(random.uniform(-aperture_size,aperture_size, nObservations[sample_index]))
            diff_x = abs(coor_x[:, None] - coor_x)
            diff_y = abs(coor_y[:, None] - coor_y)
            # check if there is a pair for which both x and y coordinates overlap. If so, resample coordinates
            tooClose = (diff_x <= mushroom_size*0.8) & (diff_y <= mushroom_size*0.8)
            if (np.triu(tooClose, k=1)==False).all(): # only take into account upper triangle to get rid of diagonal which is always 0/True.
                ok = 1

        # initialize mushroom images
        if red[sample_index] > 0:
            red_mushrooms = [visual.ImageStim(
                win=win,
                name='red_mushrooms',
                image='red_mushroom.png', mask=None,
                ori=0.0, pos=(coor_x[i], coor_y[i]), size=[mushroom_size],
                color=[1,1,1], colorSpace='rgb', opacity=None,
                flipHoriz=False, flipVert=False,
                texRes=128.0, interpolate=True, depth=0.0)
               for i in range(red[sample_index])]
            for i in red_mushrooms:
                i.autoDraw = True
        if blue[sample_index] > 0:
            blue_mushrooms = [visual.ImageStim(
                win=win,
                name='blue_mushrooms',
                image='blue_mushroom.png', mask=None,
                ori=0.0, pos=(coor_x[i], coor_y[i]), size=[mushroom_size],
                color=[1,1,1], colorSpace='rgb', opacity=None,
                flipHoriz=False, flipVert=False,
                texRes=128.0, interpolate=True, depth=0.0)
               for i in range(red[sample_index],red[sample_index]+blue[sample_index])]
            for i in blue_mushrooms:
                i.setAutoDraw(True)
      Each Frame:
        if frameN == 1:
            if sample_index == 0:
                Tstart_field1 = triggerClock.getTime()
            if sample_index == 1:
                Tstart_field2 = triggerClock.getTime()
            if sample_index == 2:
                Tstart_field3 = triggerClock.getTime()
            if sample_index == 3:
                Tstart_field4 = triggerClock.getTime()
            if sample_index == 4:
                Tstart_field5 = triggerClock.getTime()

        if t < 1.2:
            continueRoutine = True
        else:
            continueRoutine = False
      End JS Routine:
        if ((red[sample_index] > 0)) {
            for (var i, _pj_c = 0, _pj_a = red_mushrooms, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                i.setAutoDraw(false);
            }
        }
        if ((blue[sample_index] > 0)) {
            for (var i, _pj_c = 0, _pj_a = blue_mushrooms, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                i.setAutoDraw(false);
            }
        }

        sample_index = (sample_index + 1);
      End Routine:
        if sample_index == 0:
            Tend_field1 = triggerClock.getTime()
        if sample_index == 1:
            Tend_field2 = triggerClock.getTime()
        if sample_index == 2:
            Tend_field3 = triggerClock.getTime()
        if sample_index == 3:
            Tend_field4 = triggerClock.getTime()
        if sample_index == 4:
            Tend_field5 = triggerClock.getTime()


        if red[sample_index] > 0:
            for i in red_mushrooms:
                i.setAutoDraw(False)

        if blue[sample_index] > 0:
            for i in blue_mushrooms:
                i.setAutoDraw(False)

        sample_index = sample_index + 1
  Routine informedConsent
    CodeComponent informedConsent_code
      Code Type = Auto->JS
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      Begin Experiment:
        IC1 = ("Dear participant,\n\nFirst, thank you for your interest!\nBefore the study starts, it is important that you are informed about the procedures. "
        "Therefore, we would like you to read this information letter carefully.\nPlease do not hesitate to ask for clarification about this text or the general procedure. "
        "If anything is unclear, the researcher will answer your questions.\n\n\n"
        "You can go back and forth through the instructions by pressing the LEFT and RIGHT arrow keys.\n\n\n"
        "Now press the RIGHT arrow key to move on to the next instruction.")

        IC2 = ("Type of Research:\n\nYou will participate in an online estimation study.\n\nThe study will start with a short personality questionnaire, followed by an estimation game. This will take approximately 30 minutes in total.\n\n\n"
        "Please ensure you are not disturbed in the coming 30 minutes:\n"
        "The estimation game has a maximum response time. If you fail to respond within the time window too many times, "
        "the experiment will be terminated automatically and you will not receive your payment.")

        IC3 = ("Voluntary participation:\n\nThere are no consequences if you decide not to participate in this study.\n"
        "During the study, you are free to stop participating at any moment, without giving a reason for doing so.\n"
        "Within seven days after participation, you are allowed to withdraw your data from this study and your data will be deleted permanently.")

        IC4 = ("Your privacy is guaranteed:\n\n"
        "Your personal information (about who you are) remains confidential and will not be shared without your explicit consent.\n"
        "Your research data will be analyzed by the researchers who collected the information. "
        "Research data published in scientific journals will be anonymous and cannot be traced back to you as an individual. "
        "Completely anonymized data can be shared with other researchers.")

        IC5 = ("Discomfort, risks and insurance:\n\n"
        "As with any research at the University of Amsterdam (UvA), a standard liability insurance applies.\n\n\n\n\n"
        "Compensation:\n\nA flat fee of £3.75 upon completion of the study, plus a bonus of up to £1.50 depending on your performance in the estimation game.")

        IC6 = ("Further information:\n\nShould you have questions about this study at any given moment, please contact the responsible researcher,\n"
        "Lieke Hofmans (l.hofmans@uva.nl).\n\nFormal complaints about this study can be addressed to the Ethics Review Board, "
        "Helle Larsen (h.larsen@uva.nl).")

        IC7 = ("Informed consent:\n\nBy pressing ENTER you register you give informed consent:\n"
        "You are well informed, have read the aforementioned information carefully, and wish to start the study.\n\n\n"
        "If you wish to go over the information once more, you can use the LEFT and RIGHT arrow keys to go back and forth.\n\n"
        "If you do not wish to start the study, you can leave the study now.")

        ICDict = { "1": IC1,
                      "2": IC2,
                      "3": IC3,
                      "4": IC4,
                      "5": IC5,
                      "6": IC6,
                      "7": IC7,
        }

        currentIC = "1"
      Begin Routine:
        event.clearEvents()

        progress_bar_size = (window_x*2)/7 * int(currentIC)
        progress_bar_pos = (-window_x) + (window_x*2)/7 * int(currentIC) / 2
        progress_text = "Informed consent: " + currentIC + "/7"
      End Routine:
        #win.getMovieFrame()
        #name = "informed_consent_{age}.png".format(age = currentIC)
        #win.saveMovieFrames(name)

        if (informed_consent_responses.keys == "return" or informed_consent_responses.keys == "num_enter") and int(currentIC) == 7:
            currentIC = int(currentIC) + 1
        elif informed_consent_responses.keys == "right" and int(currentIC) == 7:
            currentIC = int(currentIC)
        elif informed_consent_responses.keys == "right" and int(currentIC) != 7:
            currentIC = int(currentIC) + 1
        elif informed_consent_responses.keys == "left":
            currentIC = int(currentIC) - 1

        if currentIC == 0:
            currentIC = 1  # can't go lower than
        elif currentIC == 8:
            loop_informedConsent.finished=True
            expInfo['informedConsent'] = "yes"

        currentIC = str(currentIC)
    TextComponent informed_consent
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $ICDict[currentIC]
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    KeyboardComponent informed_consent_responses
      allowedKeys = 'right', 'left', 'return', 'num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    PolygonComponent progress_bar_fixed
      fillColor = white
      pos [set every repeat] = (0, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_x*2, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent progress_bar
      fillColor = green
      lineColor = green
      pos [set every repeat] = (progress_bar_pos, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (progress_bar_size, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent progress_IC
      color = black
      letterHeight = 0.02
      pos = (0, 0.48)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        $progress_text
  Routine pause
    TextComponent shortBreak
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Goed gedaan!

        Je hebt nu een korte pauze voordat we verder gaan.

        De onderzoeker zal het volgende deel van het oogstseizoen starten door op 's' te drukken.
    CodeComponent code_6
      Code Type = Both
      Begin JS Routine:
        event.clearEvents();

        //nPerLoop = trials_parameters._snapshots[trial_index-1]["nStim"] // when multiple reps
        nPerLoop = 1; // when one large rep, devided into multiple blocks
        if (((((trials_parameters._snapshots[trial_index-1]["thisTrialN"] + 1) % nPerLoop) === 0) && (trials_parameters._snapshots[trial_index-1]["nRemaining"] !== 0))) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }

        if (n_tooLate >= 5){
            continueRoutine = false;
        }
      Begin Routine:
        event.clearEvents()

        # I only want this routine to show at the end of each block.
        #nPerLoop = loop_trials.nTotal / loop_trials.nReps # when multiple reps
        nPerLoop = 3 # when one large rep, devided into multiple blocks
        if (loop_trials.thisN + 1) % nPerLoop == 0 and loop_trials.nRemaining != 0:
            continueRoutine = True
            run = run + 1
        else:
            continueRoutine = False
      Each JS Frame:
        timer_text = Math.floor(180 - t);
      End JS Routine:
        if ((startGame === 1)) {
            if (((((trials_parameters._snapshots[trial_index-1]["thisTrialN"] + 1) % nPerLoop) === 0) && (trials_parameters._snapshots[trial_index-1]["nRemaining"] !== 0))) {
                if ((t > 179)) {
                    psychoJS.experiment.addData("shortBreak.secs", 180);
                } else {
                    psychoJS.experiment.addData("shortBreak.secs", t);
                }
            }
        }
    KeyboardComponent key_resp_3
      allowedKeys = 's'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent blue_mushroom_3
      flipHoriz = True
      image = blue_mushroom.png
      ori = 350
      pos [set every repeat] = (window_x-0.3, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent red_mushroom_3
      image = red_mushroom.png
      ori = 10
      pos [set every repeat] = (window_x-0.2, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if abs_deviance < 5:
            fb = "Great job!"
        elif abs_deviance >= 5 and deviance < 15:
            fb = "Well done"
        elif abs_deviance >= 15:
            fb = "Oops, you were a bit off"
      End Routine:
        #win.getMovieFrame()
        #win.saveMovieFrames('feedback.png')
    TextComponent feedback_text
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb
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  Routine instrEnd
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()

        if n_tooLate >= 5:
            continueRoutine = false
      End Routine:
        #win.getMovieFrame()
        #win.saveMovieFrames('end.png')
    TextComponent textFinish
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you very much for participating.

        This screen marks the end of the study.

        ATTENTION: Please click FINISH to finish this study and receive your Prolific code.

        You are reminded that by completing this study, you are agreeing with your participation and the submission of your data.
    KeyboardComponent enterFinish
      allowedKeys = 'return', 'num_enter'
      disabled = True
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent continue_button_2
      image = finish.png
      pos = (0.4, -0.35)
      saveStartStop = False
      size = (0.1, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse_2
      clickable = continue_button_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine setup
    CodeComponent code_start
      Code Type = Both
      Before Experiment:
        import pandas as pd
        import numpy as np
        from numpy import random
        from random import sample
        from random import shuffle
        import math
      Begin Experiment:
        # window parameters
        window_dimension = win.size[0] / win.size[1]
        window_y = 0.5
        window_x = window_y * window_dimension
        aperture_size = window_y * 0.5 # size of square where the mushrooms can be shown (in one direction)
        mushroom_size = aperture_size * 0.50 # size of mushroom is 1/10th of screen heigth

        maxRT = 100
        SI_delay = 4

        # background color
        bg_color=colors.Color((0, 0, 0), space='rgb')
        win.color = bg_color
        win.mouseVisible = False

        # save empty date
        expInfo['date'] = "" # overwrite actual date to deidentify data
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        shuffle = util.shuffle;
        Array.prototype.append = [].push;

        randint = function(min, maxplusone) {
            return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }

        range = function (size, startAt = 0) {
            return [...Array(size).keys()].map(i => i + startAt);
        }

        sum = function (arr) {
            return arr.reduce((a,b)=>a+b)
        }

        allAbsDifferences = function(arr, N){
            var diff;
            var diff_list = [];
            // Traverse the array
            for(var elementA = 0; elementA < N; elementA++)
            {
                for(var elementB = 0; elementB < N; elementB++)
                {
                    if ((elementA !== elementB)) {
                        diff = Math.abs((arr[elementA] - arr[elementB]));
                        diff_list.push(diff);
                    }
                }
            }
            return diff_list;
        }

        arrayMatch = function(arr1, arr2) {
            var match;
            var match_list = [];
            for (var i = 0; i < arr1.length; i++) {
                match = 0;
                if (arr1[i] == arr2[i]) {
                    match = 1;
                }
                match_list.push(match)
            }
            return match_list;
        }

        // background color
        bg_color= new util.Color([-0.4000, -0.4000, -0.4000])
        win.color = bg_color
      Begin JS Routine:
        // define trial selection
        selected_practice_trials = shuffle(range(42,0));
        selected_practice_trials.length = 1;
        selected_trials = shuffle(range(54,0));
        selected_trials.length = 3;

        // initialize value for too late trials
        n_tooLate = 0;

        test_Q1._skin["STANDARD"]["MARKER_COLOR"] = new util.Color('black') // sets marker color for all sliders
      Begin Routine:
        # define trial selection
        participant = expInfo['participant']
        run = expInfo['run']
        randomization = int(participant) % 4
        if randomization == 0:
            randomization = 4
        trialStructure_file = _thisDir + os.sep + u'trialLists/trial_structure_random%d_run%s.csv' % (randomization, expInfo['run'])
        expInfo['trialStructure_file'] = u'trial_structure_random%d_run%s.csv' % (randomization, expInfo['run'])



        list_deviance = []
      End JS Routine:
        window_dimension = (win.size[0] / win.size[1]);
        window_y = 0.5;
        window_x = (window_y * window_dimension);
        aperture_size = (window_y * 0.4);
        mushroom_size = (aperture_size * 0.5);
    CodeComponent events_file
      Code Type = Py
      Begin Experiment:
        events_filename = _thisDir + os.sep + u'../../../raw_data/sub-%03d/mushroom/sub-%03d_task-mushroom_run-%s_events' % (int(expInfo['participant']), int(expInfo['participant']), expInfo['run'])
        eventsFile = data.ExperimentHandler(savePickle=False, saveWideText=True, dataFileName=events_filename)
  Routine ISI
    TextComponent isi
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.3
      units = height
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  Routine import_wave1_data
    CodeComponent import_data
      Code Type = Both
      Begin JS Routine:
        wave1Data = new TrialHandler({
                psychoJS: psychoJS,
                nReps: 1, method: TrialHandler.Method.SEQUENTIAL,
                extraInfo: expInfo, originPath: undefined,
                trialList: 'wave1_input_confidence.csv',
                seed: undefined, name: 'wave1Data'
            });

        wave1 = wave1Data.getTrialList()


        // make list of all nTotal, ratio levels and confidence levels
        levels_nTotal = [5, 45];
        levels_ratio = [0.125, 0.25, 0.375, 0.5, 0.625, 0.75, 0.875];
        levels_confidence = [1, 2, 3];
        repeat = (values, counts) => values.flatMap((v, i) => Array(counts[i]).fill(v));
        all_nTotals = repeat(levels_nTotal, Array(levels_nTotal.length).fill(levels_ratio.length*levels_confidence.length).flat());
        all_ratios = Array(levels_nTotal.length).fill(repeat(levels_ratio, Array(levels_ratio.length).fill(levels_confidence.length).flat())).flat()


        // create shuffled list of confidence levels for each combination of nTotal and ratio
        all_confidences = [];
        for (var i, _pj_c = 0, _pj_a = levels_nTotal, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            for (var k, _pj_f = 0, _pj_d = levels_ratio, _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                k = _pj_d[_pj_f];
                all_confidences.push(...shuffle(levels_confidence));
            }
        }



        // combine nTotal ratio and confidence into one object
        nTotal_ratio_confidence = [];
        for (var i, _pj_c = 0, _pj_a = all_nTotals, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_c;
            nTotal_ratio_confidence[i] = { nTotal: all_nTotals[i], ratio: all_ratios[i], confidence: all_confidences[i] };
        }

        // make list for filler rounds: 6x SI which is closer than 3 percentage points, 3 x SI which is further than 40 percentage points.
        SI_fillers = shuffle([3, 3, 3, 3, 3, 3, 40, 40, 40]);
      Begin Routine:
        wave1Data = data.TrialHandler(nReps=1, method='sequential',
            extraInfo=expInfo, originPath=-1,
            trialList=data.importConditions('wave1_input_confidence.csv'),
            seed=None, name='wave1Data')

        wave1 = wave1Data.trialList

        # make list for filler rounds: 6 x SI which is closer than 3 percentage points, 3 x SI which is further than 40 percentage points.
        SI_fillers = [3, 3, 3, 3, 3, 3, 3, 40, 40, 40, 40]
        shuffle(SI_fillers)
  Routine feedback_traits
    CodeComponent code_15
      Code Type = Both
      Begin JS Routine:
        // give feedback
        fb1 = "According to your selection, the traits that characterize you the most are:\n\n\n\n";
        fb2 = "\n\n\n\n\n\n\nPress ENTER to continue.";
        newline = "\n";
        fb = ((((((fb1 + traits1) + newline) + traits2) + newline) + traits3) + fb2);
      Begin Routine:
        # give feedback
        fb1 = "According to your selection, the traits that characterize you the most are:\n\n\n\n"
        fb2 = "\n\n\n\n\n\n\nPress ENTER to continue."
        newline = "\n"
        fb = fb1 + traits1 + newline + traits2 + newline + traits3 + fb2
    TextComponent fb_text
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $fb
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    KeyboardComponent key_resp_4
      allowedKeys = 'return','num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instrPrac
    KeyboardComponent response
      allowedKeys = 'right', 'left', 'return', 'num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_5
      Code Type = Both
      Begin Experiment:
        Pr1 = ("MUSHROOM GAME:\n\n\nBefore we start the game, we will provide you with some instructions, "
        "followed by a few practice rounds.\n\n"
        "You can go back and forth through the instructions by pressing the LEFT and RIGHT arrow keys.\n\n\n"
        "Now press the RIGHT arrow key to move on to the next instruction.")

        Pr2 = ("In this game, you are part of a community for which the main food resource is mushrooms.\n\n"
        "These mushrooms are harvested from a forest in the vicinity of your village. "
        "Soon, it will be time to harvest, and the leader of the community has asked you for your help in coordinating this.\n\n"

        Pr3 = ("Each day, 100 people from the community will enter the forest.\n"
        "Each person will carry a bag to pick 1 type of mushroom.\n\n"
        "There are two types of mushrooms, blue and red ones.\n"
        "The problem is that these two types of mushrooms each need their own type of bag."
        "A blue mushroom can only be carried in a blue bag and a red mushroom can only be carried in a red bag.")

        Pr4 = ("Your task at the start of the day is to decide how many people will go into the forest carrying a blue bag and how many people will be carrying a red bag.\n\n"
        "If on one day there are 70 blue mushrooms and 30 red mushrooms in the forest, you need to give 70 people a blue bag and 30 people a red bag."
        "If you would give too many people a blue bag, some people carrying a blue bag would arrive home with an empty bag, "
        "while some red mushrooms would be left in the forest because there were not enough people with a red bag.\n"
        "That means your yield would not be optimal.")

        Pr5 = ("To make an informed guess about how many mushroom pickers should carry a blue or a red bag, "
        "you will get up early each morning to walk through 5 fields that surround your village.\n\n"
        "There are some blue and red mushrooms growing in these fields. "
        "You know that the mushrooms you see here are a good, but not exact representation of what will be found in the forest on that day.\n\n"
        "Thus, based on the number of blue versus red mushrooms in these 5 nearby fields, you can decide how many pickers you give a blue or a red bag.")

        Pr6 = ("On some days, you encounter many mushrooms in the fields, so you have a large sample to base your decision on."
        "On other days, however, you encounter fewer mushrooms, so you have less information to base your decision on.\n\n"
        "The more mushrooms you find in the nearby fields, the more precisely they represent the mushrooms in the forest.\n"
        "For example, if you find 10 blue and 40 red mushrooms in the field, you can be more certain of your decision than when you would have found 1 blue and 4 red mushrooms.")

        Pr7 = ("During the game, you will first see the mushrooms in each of the 5 fields.\n\n"
        "You are then asked to decide how many out of 100 pickers should carry a blue bag.\n\n"
        "Note that the number of pickers who should carry a blue bag is not necessarily the same as the number of blue mushrooms you found in the fields, because the number of mushrooms in the field is only a small sample.\n"
        "For example, if you found 2 blue and 18 red mushrooms in the field, the optimal number of pickers carrying a blue bag would probably be around 10 out of 100 pickers, not 2 out of 100.\n\n"
        "You will play multiple rounds. Each round represents a new day and all days together represent the entire harvest season.")

        Pr8 = ("You have 10 seconds to submit your decision, which is ample of time to think about your decision carefully. "
        "If you take longer than 10 seconds, you will get a warning message saying that you were too late. "
        "If that happens too often, the game will terminate automatically and you are asked to return your submission.\n\n"
        "To get a better understanding of the task and how everything looks, you will first play some practice days.\n\n"
        "Press ENTER to start the practice.")



        PrDict = { "1": Pr1,
                      "2": Pr2,
                      "3": Pr3,
                      "4": Pr4,
                      "5": Pr5,
                      "6": Pr6,
                      "7": Pr7,
                      "8": Pr8,
        }

        currentPr = "1"
      Begin JS Experiment:
        Pr1 = "MUSHROOM GAME\n\n\nBefore we start the game, we will provide you with some instructions, followed by a few practice rounds.\n\nYou can go back and forth through the instructions by pressing the LEFT and RIGHT arrow keys.\n\n\nNow press the RIGHT arrow key to move on to the next instruction."

        Pr2 = "In this game, you are part of a community for which the main food resource is mushrooms.\n\nThese mushrooms are harvested from a forest in the vicinity of your village. Soon, it will be time to harvest, and the leader of the community has asked you for your help in coordinating this."

        Pr3 = "Each day, 100 people from the community will enter the forest.\nEach person will carry a bag to pick 1 type of mushroom.\n\nThere are two types of mushrooms, blue and red ones.\nThe problem is that these two types of mushrooms each need their own type of bag. A blue mushroom can only be carried in a blue bag and a red mushroom can only be carried in a red bag."

        Pr4 = "Your task at the start of the day is to decide how many people will go into the forest carrying a blue bag and how many people will be carrying a red bag.\n\nIf on one day there are 70 blue mushrooms and 30 red mushrooms in the forest, you need to give 70 people a blue bag and 30 people a red bag. If you would give too many people a blue bag, some people carrying a blue bag would arrive home with an empty bag, while some red mushrooms would be left in the forest because there were not enough people with a red bag.\nThat means your yield would not be optimal."

        Pr5 = "To make an informed guess about how many mushroom pickers should carry a blue or a red bag, you will get up early each morning to walk through 5 fields that surround your village.\n\nThere are some blue and red mushrooms growing in these fields. You know that the mushrooms you see here are a good, but not exact representation of what will be found in the forest on that day.\n\nThus, based on the number of blue versus red mushrooms in these 5 nearby fields, you can decide how many pickers you give a blue or a red bag."

        Pr6 = "On some days, you encounter many mushrooms in the fields, so you have a large sample to base your decision on. On other days, however, you encounter fewer mushrooms, so you have less information to base your decision on.\n\nThe more mushrooms you find in the nearby fields, the more precisely they represent the mushrooms in the forest.\nFor example, if you find 10 blue and 40 red mushrooms in the field, you can be more certain of your decision than when you would have found 1 blue and 4 red mushrooms."

        Pr7 = "During the game, you will first see the mushrooms in each of the 5 fields.\n\nYou are then asked to decide how many out of 100 pickers should carry a blue bag.\n\nNote that the number of pickers who should carry a blue bag is not necessarily the same as the number of blue mushrooms you found in the fields, because the number of mushrooms in the field is only a small sample.\nFor example, if you found 2 blue and 18 red mushrooms in the field, the optimal number of pickers carrying a blue bag would probably be around 10 out of 100 pickers, not 2 out of 100.\n\nYou will play multiple rounds. Each round represents a new day and all days together represent the entire harvest season."

        Pr8 = "You have 10 seconds to submit your decision, which is ample of time to think about your decision carefully. If you take longer than 10 seconds, you will get a warning message saying that you were too late. If that happens too often, the game will terminate automatically and you are asked to return your submission.\n\nTo get a better understanding of the task and how everything looks, you will first play some practice days.\n\nPress ENTER to start the practice."

        PrDict = {"1": Pr1, "2": Pr2, "3": Pr3, "4": Pr4, "5": Pr5, "6": Pr6, "7": Pr7, "8": Pr8};
        currentPr = "1";
      Begin JS Routine:
        // only run if phase is 1
        if (practice_phase !== 1) {
            loop_instrPrac.finished = true;
            continueRoutine = false;
        }

        event.clearEvents();

        progress_bar_size = (((window_x * 2) / 18) * Number.parseInt(currentPr));
        progress_bar_pos = ((- window_x) + ((((window_x * 2) / 18) * Number.parseInt(currentPr)) / 2));
        progress_text = (("Instructions: " + currentPr) + "/18");
      Begin Routine:
        # only run if phase is 1
        if practice_phase is not 1:
            loop_instrPrac.finished = True
            continueRoutine = False

        event.clearEvents()

        progress_bar_size = (window_x*2)/18 * int(currentPr)
        progress_bar_pos = (-window_x) + (window_x*2)/18 * int(currentPr) / 2
        progress_text = "Instructions: " + currentPr + "/18"
      End JS Routine:
        if ((((response.keys === "return") || (response.keys === "num_enter")) && (Number.parseInt(currentPr) === 8))) {
            currentPr = (Number.parseInt(currentPr) + 1);
        } else {
            if (((response.keys === "right") && (Number.parseInt(currentPr) === 8))) {
                currentPr = Number.parseInt(currentPr);
            } else {
                if (((response.keys === "right") && (Number.parseInt(currentPr) !== 8))) {
                    currentPr = (Number.parseInt(currentPr) + 1);
                } else {
                    if ((response.keys === "left")) {
                        currentPr = (Number.parseInt(currentPr) - 1);
                    }
                }
            }
        }
        if ((currentPr === 0)) {
            currentPr = 1;
        } else {
            if ((currentPr === 9)) {
                loop_instrPrac.finished = true;
            }
        }
        currentPr = currentPr.toString();
        trial_index = 0;
      End Routine:
        #win.getMovieFrame()
        #name = "instrPractice_{age}.png".format(age = currentPr)
        #win.saveMovieFrames(name)

        if (response.keys == "return" or response.keys == "num_enter") and int(currentPr) == 8:
            currentPr = int(currentPr) + 1
        elif response.keys == "right" and int(currentPr) == 8:
            currentPr = int(currentPr)
        elif response.keys == "right" and int(currentPr) != 8:
            currentPr = int(currentPr) + 1
        elif response.keys == "left":
            currentPr = int(currentPr) - 1

        if currentPr == 0:
            currentPr = 1  # can't go lower than
        elif currentPr == 9:
            loop_instrPrac.finished=True

        currentPr = str(currentPr)

        trial_index = 0
    TextComponent text
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $PrDict[currentPr]
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    ImageComponent blue_mushroom
      flipHoriz = True
      image = blue_mushroom.png
      ori = 350
      pos [set every repeat] = (window_x-0.3, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent red_mushroom
      image = red_mushroom.png
      ori = 10
      pos [set every repeat] = (window_x-0.2, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent progress_bar_fixed_2
      fillColor = white
      pos [set every repeat] = (0, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_x*2, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent progress_bar_2
      fillColor = green
      lineColor = green
      pos [set every repeat] = (progress_bar_pos, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (progress_bar_size, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent progress_IC_2
      color = black
      letterHeight = 0.02
      pos = (0, 0.48)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        $progress_text
  Routine set_practicePhase
    CodeComponent set_phase
      Code Type = Auto->JS
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      Begin Experiment:
        practice_phase = 0
        startGame = 0
      Begin Routine:
        practice_phase = practice_phase + 1
        startGame = 0
  Routine showBonus
    CodeComponent code_9
      Code Type = Both
      Begin JS Routine:
        var text1 = "Great job! You have finished the harvest season.\n\n";
        var text2 = "On the day that was selected by the computer, the number of mushroom pickers you sent into the forest carrying a BLUE bag deviated ";
        var text3 = sample_deviance.toFixed(0);
        var text4 = " bags from the correct answer.\nTherefore, your bonus will be \u00a31.50 - ";
        var text5 = " x \u00a30.04 =\n\n\u00a3";
        var text6 = bonus.toFixed(2);
        var text7 = " \n\nPress ENTER to continue.";
        end_text = ((((((text1 + text2) + text3) + text4) + text3) + text5) + text6);
      Begin Routine:
        event.clearEvents()

        # sprintf function doesnt automatically translate from py to JS, so solved it this way
        if run == '3':
            text1 = "Goed gedaan!\n\nDit is het einde van het laatste oogstseizoen.\n\n"
            text2 = "Op de dag die door de computer is geselecteerd verschilde het aantal paddenstoelen plukkers dat je het bos in hebt gestuurd met een blauwe of rode zak "
            text3 = format(sample_deviance, '.0f')
            text4 = " zakken van het goede antwoord.\n\nJe bonus is daarom €1.50 - "
            text5 = " x €0.04 =\n\n€"
            text6 = format(bonus, '.2f')
            text7 = "\n\n\nDe onderzoeker zal zo het spel beëindigen."
            end_text =  text1 + text2 + text3 + text4 + text3 + text5 + text6 + text7
        else:
            text1 = "Goed gedaan!\n\nDit is het einde van oogstseizoen "
            text2 = run
            text3 = ".\n\n"
            text4 = "Je hebt nu even pauze voordat je begint aan het volgende seizoen."
            end_text =  text1 + text2 + text3 + text4
    TextComponent bonus_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $end_text
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    KeyboardComponent enter_to_end
      allowedKeys = 's'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent blue_mushroom_4
      flipHoriz = True
      image = blue_mushroom.png
      ori = 350
      pos [set every repeat] = (window_x-0.3, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent red_mushroom_4
      image = red_mushroom.png
      ori = 10
      pos [set every repeat] = (window_x-0.2, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine instrBonus
    KeyboardComponent key_resp_2
      allowedKeys = 'right', 'left', 'return', 'num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_7
      Code Type = Both
      Begin Experiment:
        event.clearEvents()


        Instr1 = ("BONUS:\n\n"
        "At the end of the harvest season you will receive a bonus.\n"
        "The amount of this bonus depends on how well you did during the game, and is calculated as follows:\n\n"
        "The computer will randomly pick one of the harvest days and compare your decision that day to the correct answer. "
        "Their is an equal chance that the computer picks your first or your second decision, so both decisions are equally important.\n\n"
        "If your decision was exactly correct, you will receive a bonus of £1.50. For each blue bag off, we will deduct 4 pence.\n\n\n"
        "Press the RIGHT arrow key to continue.")

        Instr2 = ("For example, if you decided to give 70 out of the 100 pickers a blue bag, but there were 88 blue mushrooms in the forest, "
        "you will receive £1.50 - 18 x £0.04 = £0.78.\n\n"
        "Your bonus will never go below £0.00.\n\n"
        "This means that each and every day might determine your bonus at the end of the season.\n\n\n"
        "Press the RIGHT arrow key to continue.")

        Instr3 = ("As said before, the game will consist of multiple harvest days and all days together represent the harvest season. "
        "The entire season consists of 3 blocks. After each block, you can take a short break before continuing with the next block.\n\n"
        "Please remember that you have 10 seconds to submit each decision, which is ample of time to think about your decision carefully. "
        "If you take longer than 10 seconds, you will get a warning message saying that you were too late. "
        "If that happens too often, the game will terminate automatically and you are asked to return your submission.\n\n\n\n"
        "If everything is clear, you can press ENTER to start the game.")


        InstrDict = { "1": Instr1,
                      "2": Instr2,
                      "3": Instr3,
        }

        currentInstr = "1"
      Begin JS Experiment:
        event.clearEvents();


        Instr1 = "BONUS:\n\nAt the end of the harvest season you will receive a bonus.\nThe amount of this bonus depends on how well you did during the game, and is calculated as follows:\n\nThe computer will randomly pick one of the harvest days and compare your decision that day to the correct answer. Their is an equal chance that the computer picks your first or your second decision, so both decisions are equally important.\n\nIf your decision was exactly correct, you will receive a bonus of \u00a31.50. For each blue bag off, we will deduct 4 pence.\n\n\nPress the RIGHT arrow key to continue."

        Instr2 = "For example, if you decided to give 70 out of the 100 pickers a blue bag, but there were 88 blue mushrooms in the forest, you will receive \u00a31.50 - 18 x \u00a30.04 = \u00a30.78.\n\nYour bonus will never go below \u00a30.00.\n\nThis means that each and every day might determine your bonus at the end of the season.\n\n\nPress the RIGHT arrow key to continue."

        Instr3 = "As said before, the game will consist of multiple harvest days and all days together represent the harvest season. The entire season consists of 3 blocks. After each block, you can take a short break before continuing with the next block.\n\nPlease remember that you have 10 seconds to submit each decision, which is ample of time to think about your decision carefully. If you take longer than 10 seconds, you will get a warning message saying that you were too late. If that happens too often, the game will terminate automatically and you are asked to return your submission.\n\n\n\nIf everything is clear, you can press ENTER to start the game."
        InstrDict = {"1": Instr1, "2": Instr2, "3": Instr3};
        currentInstr = "1";
      Begin JS Routine:
        // only run if phase is 2
        if (practice_phase !== 2) {
            loop_instrBonus.finished = true;
            continueRoutine = false;
        }

        progress_bar_size = (((window_x * 2) / 18) * (Number.parseInt(currentInstr) + 15));
        progress_bar_pos = ((- window_x) + ((((window_x * 2) / 18) * (Number.parseInt(currentInstr) + 15)) / 2));
        progress_text = (("Instructions: " + (Number.parseInt(currentInstr)+15).toString()) + "/18");
      Begin Routine:
        # only run if phase is 2
        if practice_phase is not 2:
            loop_instrBonus.finished = True
            continueRoutine = False

        progress_bar_size = (window_x*2)/18 * (int(currentInstr) + 15)
        progress_bar_pos = (-window_x) + (window_x*2)/18 * (int(currentInstr) + 15) / 2
        progress_text = "Instructions: " + str(int(currentInstr)+15) + "/18"
      End JS Routine:
        if ((((key_resp_2.keys === "return") || (key_resp_2.keys === "num_enter")) && (Number.parseInt(currentInstr) === 3))) {
            currentInstr = (Number.parseInt(currentInstr) + 1);
        } else {
            if (((key_resp_2.keys === "right") && (Number.parseInt(currentInstr) === 3))) {
                currentInstr = Number.parseInt(currentInstr);
            } else {
                if (((key_resp_2.keys === "right") && (Number.parseInt(currentInstr) !== 3))) {
                    currentInstr = (Number.parseInt(currentInstr) + 1);
                } else {
                    if ((key_resp_2.keys === "left")) {
                        currentInstr = (Number.parseInt(currentInstr) - 1);
                    }
                }
            }
        }
        if ((currentInstr === 0)) {
            currentInstr = 1;
        } else {
            if ((currentInstr === 4)) {
                loop_instrBonus.finished = true;
            }
        }
        currentInstr = currentInstr.toString();
        list_deviance = [];
        trial_index = 0;
        startGame = 1;
      End Routine:
        #win.getMovieFrame()
        #name = "instructions_{age}.png".format(age = currentInstr)
        #win.saveMovieFrames(name)

        if (key_resp_2.keys == "return" or key_resp_2.keys == "num_enter") and int(currentInstr) == 3:
            currentInstr = int(currentInstr) + 1
        elif key_resp_2.keys == "right" and int(currentInstr) == 3:
            currentInstr = int(currentInstr)
        elif key_resp_2.keys == "right" and int(currentInstr) != 3:
            currentInstr = int(currentInstr) + 1
        elif key_resp_2.keys == "left":
            currentInstr = int(currentInstr) - 1

        if currentInstr == 0:
            currentInstr = 1  # can't go lower than
        elif currentInstr == 4:
            loop_instrBonus.finished=True

        currentInstr = str(currentInstr)

        list_deviance = []
        trial_index = 0
        startGame = 1
    TextComponent text_3
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $InstrDict[currentInstr]
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    ImageComponent blue_mushroom_2
      flipHoriz = True
      image = blue_mushroom.png
      ori = 350
      pos [set every repeat] = (window_x-0.3, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent red_mushroom_2
      image = red_mushroom.png
      ori = 10
      pos [set every repeat] = (window_x-0.2, -0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent progress_bar_fixed_3
      fillColor = white
      pos [set every repeat] = (0, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_x*2, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent progress_bar_3
      fillColor = green
      lineColor = green
      pos [set every repeat] = (progress_bar_pos, 0.48)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (progress_bar_size, 0.03)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent progress_IC_3
      color = black
      letterHeight = 0.02
      pos = (0, 0.48)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        $progress_text
  Routine start_game
    CodeComponent start
      Code Type = Auto->JS
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      Begin Experiment:
        startGame = 1
  Routine tooLate_feedback
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # only run if participant was too late
        if tooLate == 0:
            continueRoutine = False
    TextComponent tooLate_fb
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Te laat!
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  Routine start_slide
    TextComponent text_4
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welkom bij het Paddenstoelen spel.

        De onderzoeker zal het spel zo starten.
    KeyboardComponent key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine waitForTrigger
    TextComponent text_5
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Succes!
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    KeyboardComponent wait_for_pulse
      allowedKeys = 't'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        triggerClock = core.Clock()
        #triggerClock = core.monotonicClock
  Routine firstEstimation
    CodeComponent when_to_continue
      Code Type = Both
      Begin JS Routine:
        event.clearEvents();
        document.body.style.cursor='auto';

        estimation_slider.markerPos = 50; // in slider units
        markerPosition = 0; // in height units
        blueRectangle_pos = -0.125;
        blueRectangle_size = 0.25;
        show_estimate_text = " ";


        estimation_slider._opacity = 0;
        confidence._bold = false;
        sliderfont = "Helvetica";
      Begin Routine:
        kb = keyboard.Keyboard()
        kb.clearEvents()

        # initiate slider
        markerPosition = -0.5
        tempRating = 0
        rating = 0
        ratingBeforePressed = 0
        tMove_start = t

        nKeys = 0
        submit = 0
        tooLate = 0
        speed = 0

        # text about how to submit
        howToRespond = ""
      Each Frame:
        if frameN == 1:
            Tstart_estimate1 = triggerClock.getTime()

        # need to manually check for escape, as our key checking will interfere with
        # Builder's escape check:
        events = event.getKeys()
        if 'escape' in events:
            core.quit()

        # check if participant is too late
        rt = t
        if rt > maxRT:
            tooLate = 1
            continueRoutine = False

        # move slider colors along with response
        keys = kb.getKeys(['b', 'y', 'e'], waitRelease = False, clear=False)
        keys_released = kb.getKeys(['b', 'y', 'e'], waitRelease = True, clear=False)

        # everytime a new button is pressed in, I reset the acceleration with which the slider marker moves
        if len(keys) > nKeys: # new key pressed in
            nKeys = len(keys) # update nKeys
            tMove_start = t # reset speed reference point to start of new button press
            howToRespond = "Druk op ENTER om op te slaan" # show pp can press ENTER as soon as there is a rating
        # check for sticky key: reset speed reference point and keyboard buffer at least every 2 secs
        if (t - tMove_start) > 2:
            kb.clearEvents() # if sticky key, reset keyboard buffer
            nKeys = 0
            tMove_start = t # reset speed reference point

        #released only shows sth when key is released, otherwise empty.
        #all button presses are stored in keys if clear is false.
        # button down if keys(end).duration == None and len(keys) == len(released) + 1
        if len(keys) > len(keys_released): # button pressed in, but not yet released
            if keys[len(keys)-1].duration is not None: # keys is longer than keys released because there is a sticky key, not because a key is actually pressed in
                kb.clearEvents()
                nKeys = 0
                tMove_start = t # reset speed reference point
            else:
                speed = min(t - tMove_start, 2) # the longer pressed in, the faster the slider moves, with a maximum speed after 2 sec
                key = keys[len(keys)-1].name
                if key == 'b':
                    tempRating -= math.exp(speed*1.5)-1 # -1 to make it move extra slow for short presses, but still fast for long presses.
                    submit = 1
                elif key =='y':
                    tempRating += math.exp(speed*1.5)-1
                    submit = 1
                elif key == 'e' and submit == 1:
                    continueRoutine = False
        elif len(keys) == len(keys_released): # all buttons released
            # make sure rating moves at least 1 tick if it was shortly pressed and released (a very low ratinTemp might otherwise be rounded to a stepsize of 0)
            if tempRating > ratingBeforePressed:
                tempRating = max(ratingBeforePressed+1, tempRating)
            elif tempRating < ratingBeforePressed:
                tempRating = min(ratingBeforePressed-1, tempRating)
            ratingBeforePressed = tempRating

        # Make sure rating does not exceed limits of 0 and 100
        tempRating = min(tempRating, 100)
        tempRating = max(tempRating, 0)
        rating = round(tempRating)
        markerPosition = (rating - 50) / 100
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();


        if ((estimation_slider.markerPos !== undefined)) {
            markerPos = estimation_slider.markerPos;
            markerPosition = (markerPos - 50) / 200;
            blueRectangle_pos = ((- 0.25) + ((markerPos / 200) / 2));
            blueRectangle_size = markerPos / 200;
            show_estimate_text = Number.parseInt(markerPosition*200+50);
        }


        rating_completed = 0;
        if ((estimation_slider.getRating() !== undefined)) {
            rating_completed = 1;
            if ((confidence.getRating() !== undefined)) {
                rating_completed = 2;
            }
        }
        if (((_pj.in_es6("return", keys) || _pj.in_es6("num_enter", keys)) && (rating_completed === 2))) {
            estimation_slider.markerPos = undefined;
            markerPosition = 0;
            show_estimate_text = " ";
            blueRectangle_pos = - 0.125;
            blueRectangle_size = 0.25;
            continueRoutine = false;
        }
      End JS Experiment:
        bonus = (1.5 - (abs_deviance * 0.04));
      End JS Routine:
        deviance = Number.parseInt((estimation_slider.getRating() - (true_ratio * 100)));
        abs_deviance = Math.abs(deviance);
        if ((startGame === 1)) {
            for (var iConfidence = 0, _pj_a = confidence.getRating(); (iConfidence < _pj_a); iConfidence += 1) {
                list_deviance.push(abs_deviance);
            }
            psychoJS.experiment.addData("cross_hair.ITI", crosshair_ITI);
            psychoJS.experiment.addData("seen_ratio", seen_ratio);
            psychoJS.experiment.addData("nMushrooms", String(nObservations));
            psychoJS.experiment.addData("nBlue", String(blue));
            psychoJS.experiment.addData("nRed", String(red));
            psychoJS.experiment.addData("estimation.rating", estimation_slider.getRating());
            psychoJS.experiment.addData("estimation.rt", estimation_slider.getRT());
            psychoJS.experiment.addData("confidence.response", confidence.getRating());
            psychoJS.experiment.addData("confidence.rt", confidence.getRT());
            // nRemaining is nRemaining across all, so nRemaining===0 is the very very last trial.
            if ((trials_parameters._snapshots[trial_index]["nRemaining"] === 0)) {
                sample_deviance = list_deviance[Math.floor(Math.random() * list_deviance.length)];
                bonus = (1.5 - (sample_deviance * 0.04));
                if ((bonus < 0)) {
                    bonus = 0;
                }
                expInfo["bonus"] = bonus;
            }
        }

        trial_index = trial_index + 1
      End Routine:
        Tend_estimate1 = triggerClock.getTime()

        kb.clearEvents()

        # performance
        estimate1 = int(rating)
        if tooLate == 0:
            estimate1_rt = rt
            deviance = estimate1 - true_ratio*100
            abs_deviance = abs(deviance)
        elif tooLate == 1:
            estimate1_rt = []
        # save data
        loop_trials.addData('cross_hair.ITI', crosshair_ITI)
        loop_trials.addData('seen_ratio', seen_ratio)
        loop_trials.addData('nMushrooms', " ".join(map(str, nObservations)))
        loop_trials.addData('nBlue', " ".join(map(str, blue)))
        loop_trials.addData('nRed', " ".join(map(str, red)))
        loop_trials.addData('estimation1.rating', estimate1)
        loop_trials.addData('estimation1.rt', estimate1_rt)
        if tooLate == 0:
            list_deviance.append(abs_deviance)
    TextComponent how_many_mushrooms
      letterHeight = 0.032
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Hoeveel blauwe en rode zakken moeten vandaag worden meegenomen naar het bos?
      units = height
      wrapWidth = 0.8
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    PolygonComponent white_rectangle_3
      fillColor = white
      lineWidth = 0.5
      pos = (0, -0.18)
      saveStartStop = False
      shape = rectangle
      size = (1, 0.04)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blue_box
      fillColor = blue
      lineColor = blue
      pos [set every frame] = [markerPosition-0.026, -0.135]
      saveStartStop = False
      shape = rectangle
      size = [0.06, 0.04]
      startVal [time (s)] = 0
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    TextComponent showEstimate
      color = White
      letterHeight = 0.035
      pos [set every frame] = [markerPosition-0.026, -0.135]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $int(rating)
      units = height
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    PolygonComponent sliderMarker
      fillColor = black
      lineColor = black
      pos [set every frame] = [markerPosition, -0.18]
      saveStartStop = False
      shape = rectangle
      size = (0.008, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent red_box
      fillColor = red
      lineColor = red
      pos [set every frame] = [markerPosition+0.026, -0.225]
      saveStartStop = False
      shape = rectangle
      size = [0.06, 0.04]
      startVal [time (s)] = 0
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    TextComponent showEstimate_red
      color = White
      letterHeight = 0.035
      pos [set every frame] = [markerPosition+0.026, -0.225]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $100-int(rating)
      units = height
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    TextComponent text_8
      letterHeight = 0.032
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $howToRespond
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  Routine SI
    CodeComponent pick_and_show_estimate
      Code Type = Py
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      Begin Routine:
        event.clearEvents()

        # do not run if participant was too late at first estimation
        if tooLate == 1:
            continueRoutine = False
            estimate1 = 100 # set random estimate so program doesnt crash

        # filter wave1 data based on current ratio and confidence level
        filtered_SI = [row for row in wave1 if row['true_ratio']==true_ratio and row['confidence']==confidence_level] # filter wave1 data / social information based on current ratio and confidence level
        # never show peer estimate of 0 or 100 (might not be believable in case participant saw both colors).
        filtered_SI = [row for row in filtered_SI if row['estimate']>0 and row['estimate']<100]

        # pick SI for which estimate is 15-18 percentage points in direction of true ratio.
        delta = int(estimate1 - true_ratio * 100);
        if filler_trial == 1: # pick a peer estimate that is either super close or super far, in any direction
            close_far = SI_fillers[0]; # pick first element of shuffled list
            if true_ratio == 0 or true_ratio == 1:
                close_far = 3 # to make it more believable
            if close_far == 3:
                filtered_SI2 = [row for row in filtered_SI if row['estimate'] > estimate1 - 3 and row['estimate'] < estimate1 + 3]
                if len(filtered_SI2) == 0:
                    close_far = 40;
            if close_far == 40:
                filtered_SI2 = [row for row in filtered_SI if (row['estimate'] < estimate1 - 40 or row['estimate'] > estimate1 + 40)]
            if true_ratio != 0 and true_ratio != 1:
                SI_fillers.remove(close_far)  # remove used filler trial from list
        elif delta > 0:
            if estimate1 < 16:
                filtered_SI2 = [row for row in filtered_SI if row['estimate'] == 1]
            else:
                filtered_SI2 = [row for row in filtered_SI if row['estimate'] > estimate1 - 19 and row['estimate'] < estimate1 - 14]
        elif delta < 0:
            if estimate1 > 84:
                filtered_SI2 = [row for row in filtered_SI if row['estimate'] == 99]
            else:
                filtered_SI2 = [row for row in filtered_SI if row['estimate'] < estimate1 + 19 and row['estimate'] > estimate1 + 14]
        elif delta == 0: # any direction
            filtered_SI2 = [row for row in filtered_SI if (row['estimate'] > estimate1 - 19 and row['estimate'] < estimate1 - 14) or (row['estimate'] < estimate1 + 19 and row['estimate'] > estimate1 + 14)]


        # if no suitable SI could be found, just include all SI only filtered based on ratio and confidence.
        if len(filtered_SI2) == 0:
            filtered_SI2 = filtered_SI

        # now randomly choose a peer estimate from filtered list
        random_index = int(random.randint(0,len(filtered_SI2),1))
        peer_estimate = filtered_SI2[random_index]['estimate']


        # define image to show about peers confidence
        if confidence_level == 1:
            peers_confidence_image = "low_peerConfidence.png"
        elif confidence_level == 2:
            peers_confidence_image = "medium_peerConfidence.png"
        elif confidence_level == 3:
            peers_confidence_image = "high_peerConfidence.png"

        # parameters for visual peer estimate information
        markerPosition_peer = (peer_estimate - 50) / 100
    CodeComponent when_to_continue_2
      Code Type = Both
      Begin JS Routine:
        // do not run if participant was too late at first estimation
        if (tooLate === 1){
            continueRoutine = false;
        }

        event.clearEvents();
        document.body.style.cursor='auto';


        //estimation_slider_2.markerPos = estimation_slider_1.getRating(); // in slider units
        markerPos_2 = estimate1;
        markerPosition_2 = (markerPos_2 - 50) / 200; // in height units
        blueRectangle_2_pos = ((- 0.25) + ((markerPos_2 / 200) / 2));
        blueRectangle_2_size = markerPos_2 / 200;
        show_estimate1_text = Number.parseInt(markerPosition_2*200+50);


        //estimation_slider_2._opacity = 0;
        sliderfont = "Helvetica";

        //your_estimate1_text = ("Your part A decision was " + markerPos_2);


        //textbox parameters
        estimate2_textbox._multiline = false;
        estimate2_textbox._needPixiUpdate = true; // autofocus
        estimate2_textbox._needUpdate = true; // autofocus at repeat
      Begin Routine:
        # do not run if participant was too late at first estimation
        if tooLate == 1:
            continueRoutine = False

        kb = keyboard.Keyboard()
        kb.clearEvents()

        # initiate slider
        markerPosition_E1 = (estimate1-50) / 100
        markerPosition_E2 = -0.5
        tempRating = 0
        rating = 0
        ratingBeforePressed = 0
        tMove_start = t

        nKeys = 0
        submit = 0
        speed = 0
        SI_delay_done = 0

        # set alignment of text
        estimateOther.alignText='left'
        estimateSelf.alignText='left'

        # text about how to submit
        howToRespond = ""
      Each Frame:
        if frameN == 1:
            Tstart_SI = triggerClock.getTime()

        # need to manually check for escape, as our key checking will interfere with
        # Builder's escape check:
        events = event.getKeys()
        if 'escape' in events:
            core.quit()

        # check if participant is too late
        rt = t
        if rt > SI_delay + maxRT:
            tooLate = 1
            continueRoutine = False

        # ONLY START RECORDING KEYBOARD PRESSES AFTER SI_DELAY
        if t > SI_delay:
            if SI_delay_done == 0:
                Tend_SI = triggerClock.getTime()
                Tstart_estimate2 = triggerClock.getTime()

            # move slider colors along with response
            keys = kb.getKeys(['b', 'y', 'e'], waitRelease = False, clear=False)
            keys_released = kb.getKeys(['b', 'y', 'e'], waitRelease = True, clear=False)

            # everytime a new button is pressed in, I reset the speed with which the slider marker moves
            if len(keys) > nKeys: # new key pressed in
                nKeys = len(keys) # update nKeys
                tMove_start = t # reset speed reference point to start of new button press
                howToRespond = "Druk op ENTER om op te slaan" # show pp can press ENTER as soon as there is a rating
            # check for sticky key: reset speed reference point and keyboard buffer at least every 2 secs
            if (t - tMove_start) > 2:
                kb.clearEvents() # if sticky key, reset keyboard buffer
                nKeys = 0
                tMove_start = t # reset speed reference point

            #released only shows sth when key is released, otherwise empty.
            #all button presses are stored in keys if clear is false.
            # button down if keys(end).duration == None and len(keys) == len(released) + 1
            if len(keys) > len(keys_released): # button pressed in, but not yet released
                if keys[len(keys)-1].duration is not None: # keys is longer than keys released because there is a sticky key, not because a key is actually pressed in
                    kb.clearEvents()
                    nKeys = 0
                    tMove_start = t # reset speed reference point
                else:
                    speed = min(t - tMove_start, 2) # the longer pressed in, the faster the slider moves, with a maximum speed after 2 sec
                    key = keys[len(keys)-1].name
                    if key == 'b':
                        tempRating -= math.exp(speed*1.5)-1 # -1 to make it move extra slow for short presses, but still fast for long presses.
                        submit = 1
                    elif key =='y':
                        tempRating += math.exp(speed*1.5)-1
                        submit = 1
                    elif key == 'e' and submit == 1:
                        continueRoutine = False
            elif len(keys) == len(keys_released): # all buttons released
                # make sure rating moves at least 1 tick if it was shortly pressed and released (a very low ratinTemp might otherwise be rounded to a stepsize of 0)
                if tempRating > ratingBeforePressed:
                    tempRating = max(ratingBeforePressed+1, tempRating)
                elif tempRating < ratingBeforePressed:
                    tempRating = min(ratingBeforePressed-1, tempRating)
                ratingBeforePressed = tempRating

            # Make sure rating does not exceed limits of 0 and 100
            tempRating = min(tempRating, 100)
            tempRating = max(tempRating, 0)
            rating = round(tempRating)
            markerPosition_E2 = (rating - 50) / 100

            SI_delay_done = 1
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();

        // check if participant is too late
        if (t > 12){
            if (startGame===1){
                n_tooLate = n_tooLate + 1;
            }
            tooLate = 1;
            continueRoutine = false;
        }


        // check if estimate is within 1-100
        invalid = false;
        invalid_input = "";
        if (((estimate2_textbox.text.length > 0) && (estimate2_textbox.text !== " "))) {
            if ((isNaN(Number.parseInt(estimate2_textbox.text)))) {
                invalid = true;
                invalid_input = "*invalid input\n(needs to be numerical with range 1-100)";
            }
            if ((invalid === false)) {
                if (((Number.parseInt(estimate2_textbox.text) < 0) || (Number.parseInt(estimate2_textbox.text) > 100))) {
                    invalid = true;
                    invalid_input = "*invalid input\n(needs to be numerical with range 1-100)";
                }
            }
        }


        // check if rating has been completed:
        pressENTER = "";
        if ((((estimate2_textbox.text.length > 0) && (estimate2_textbox.text !== " ")) && (invalid === false))) {
            pressENTER = "Press ENTER to submit your decision";
            if (_pj.in_es6("return", keys) || _pj.in_es6("num_enter", keys)){
                estimate2 = Number.parseInt(estimate2_textbox.text);
                estimate2_rt = t-2;
                continueRoutine = false;
            }
        }



        // WHEN ACTUAL SLIDER
        //if ((estimation_slider_2.markerPos !== undefined)) {
        //    markerPos_2 = estimation_slider_2.markerPos;
        //    markerPosition_2 = (markerPos_2 - 50) / 200;
        //    blueRectangle_2_pos = ((- 0.25) + ((markerPos_2 / 200) / 2));
        //    blueRectangle_2_size = markerPos_2 / 200;
        //    show_estimate_2_text = Number.parseInt(markerPosition_2*200+50);
        //}


        //rating_completed = 0;
        //if ((estimation_slider_2.getRating() !== undefined)) {
        //    rating_completed = 1;
        //}

        //if (((_pj.in_es6("return", keys) || _pj.in_es6("num_enter", keys)) && (rating_completed === 1))) {
        //    continueRoutine = false;
        //}
      End JS Routine:
        if (tooLate === 0){
            deviance = estimate2 - true_ratio * 100;
            abs_deviance = Math.abs(deviance);
        }

        if ((startGame === 1)) {
            if (tooLate === 0){
                list_deviance.push(abs_deviance);
                psychoJS.experiment.addData("estimation2.rating", estimate2);
                psychoJS.experiment.addData("estimation2.rt", estimate2_rt); // slider appears after 2 secs
                psychoJS.experiment.addData("estimate_peer", peer_estimate);
                psychoJS.experiment.addData("confidence_peer", confidence_level);
            }
            // nRemaining is nRemaining across all, so nRemaining===0 is the very very last trial.
            if ((trials_parameters._snapshots[trial_index]["nRemaining"] === 0)) {
                sample_deviance = list_deviance[Math.floor(Math.random() * list_deviance.length)];
                bonus = (1.5 - (sample_deviance * 0.04));
                if ((bonus < 0)) {
                    bonus = 0;
                }
                expInfo["bonus"] = bonus;
            }
        }

        trial_index = trial_index + 1
      End Routine:
        Tend_estimate2 = triggerClock.getTime()

        kb.clearEvents()

        estimate2 = int(rating)
        # performance
        if tooLate == 0:
            estimate2_rt = rt-SI_delay
            deviance = estimate2 - true_ratio*100
            abs_deviance = abs(deviance)
        elif tooLate == 1:
            estimate2_rt = []

        # save data
        loop_trials.addData('confidence_own.rating', []) # only for practice, not in fMRI task
        loop_trials.addData('confidence_own.rt', []) # only for practice, not in fMRI task
        loop_trials.addData('estimation2.rating', estimate2)
        loop_trials.addData('estimation2.rt', estimate2_rt)
        if tooLate == 0:
            list_deviance.append(abs_deviance)
        loop_trials.addData('estimate_peer', peer_estimate)
        loop_trials.addData('confidence_peer', confidence_level)
        if loop_trials.nRemaining == 0:
            list_deviance = np.array(list_deviance)
            sample_deviance = round(sample(list(list_deviance),1)[0])
            bonus = 1.50 - sample_deviance*0.04
            if bonus < 0:
                bonus = 0 # never lower than
            if int(expInfo['run']) == 3:
                expInfo['bonus'] = bonus # only save on last run
            else:
                expInfo['bonus'] = []
    TextComponent how_many_mushrooms_2
      letterHeight = 0.032
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = SI_delay
      text = Hoeveel blauwe en rode zakken moeten vandaag worden meegenomen naar het bos?
      units = height
      wrapWidth = 0.8
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    PolygonComponent white_rectangle_peer
      fillColor = white
      lineWidth = 0.5
      pos = (0, 0.02)
      saveStartStop = False
      shape = rectangle
      size = (1, 0.04)
      startVal [time (s)] = 0
      units = height
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    ImageComponent peer_confidence_rating
      image [set every repeat] = $peers_confidence_image
      pos [set every repeat] = (markerPosition_peer, 0.21)
      saveStartStop = False
      size = (0.29, 0.21)
      startVal [time (s)] = 0.0
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    PolygonComponent blue_box_peer
      fillColor = dodgerblue
      lineColor = dodgerblue
      pos [set every repeat] = [markerPosition_peer-0.026, 0.065]
      saveStartStop = False
      shape = rectangle
      size = [0.06, 0.04]
      startVal [time (s)] = 0
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    PolygonComponent sliderMarker_peer
      fillColor = black
      lineColor = black
      pos [set every repeat] = [markerPosition_peer, 0.02]
      saveStartStop = False
      shape = rectangle
      size = (0.008, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent showEstimate_peer
      letterHeight = 0.035
      pos [set every repeat] = [markerPosition_peer-0.026, 0.065]
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $peer_estimate
      units = height
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    PolygonComponent white_rectangle
      fillColor = white
      lineWidth = 0.5
      pos = (0, -0.18)
      saveStartStop = False
      shape = rectangle
      size = (1, 0.04)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent blue_box_E1
      fillColor = dodgerblue
      lineColor = dodgerblue
      pos [set every repeat] = [markerPosition_E1-0.026, -0.135]
      saveStartStop = False
      shape = rectangle
      size = [0.06, 0.04]
      startVal [time (s)] = 0
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    TextComponent showEstimate_E1
      letterHeight = 0.035
      pos [set every frame] = [markerPosition_E1-0.026, -0.135]
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $int(estimate1)
      units = height
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    PolygonComponent sliderMarker_E1
      fillColor = black
      lineColor = black
      pos [set every repeat] = [markerPosition_E1, -0.18]
      saveStartStop = False
      shape = rectangle
      size = (0.008, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blue_box_E2
      fillColor = blue
      lineColor = blue
      pos [set every frame] = [markerPosition_E2-0.026, -0.135]
      saveStartStop = False
      shape = rectangle
      size = [0.06, 0.04]
      startVal [time (s)] = SI_delay
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    TextComponent showEstimate_E2
      letterHeight = 0.035
      pos [set every frame] = [markerPosition_E2-0.026, -0.135]
      saveStartStop = False
      startVal [time (s)] = SI_delay
      text [set every frame] = $int(rating)
      units = height
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    PolygonComponent sliderMarker_E2
      fillColor = black
      lineColor = black
      pos [set every frame] = [markerPosition_E2, -0.18]
      saveStartStop = False
      shape = rectangle
      size = (0.008, 0.05)
      startVal [time (s)] = SI_delay
      units = height
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    TextComponent enterToRespond
      letterHeight = 0.032
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = SI_delay
      text [set every frame] = $howToRespond
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    PolygonComponent red_box_peer
      fillColor = lightcoral
      lineColor = lightcoral
      pos [set every repeat] = [markerPosition_peer+0.026, -0.025]
      saveStartStop = False
      shape = rectangle
      size = [0.06, 0.04]
      startVal [time (s)] = 0
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    TextComponent showEstimate_red_peer
      letterHeight = 0.035
      pos [set every repeat] = [markerPosition_peer+0.026, -0.025]
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $100-peer_estimate
      units = height
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    PolygonComponent red_box_E1
      fillColor = lightcoral
      lineColor = lightcoral
      pos [set every repeat] = [markerPosition_E1+0.026, -0.225]
      saveStartStop = False
      shape = rectangle
      size = [0.06, 0.04]
      startVal [time (s)] = 0
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    TextComponent showEstimate_red_E1
      letterHeight = 0.035
      pos [set every frame] = [markerPosition_E1+0.026, -0.225]
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $100-int(estimate1)
      units = height
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    PolygonComponent red_box_E2
      fillColor = red
      lineColor = red
      pos [set every frame] = [markerPosition_E2+0.026, -0.225]
      saveStartStop = False
      shape = rectangle
      size = [0.06, 0.04]
      startVal [time (s)] = SI_delay
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    TextComponent showEstimate_red_E2
      letterHeight = 0.035
      pos [set every frame] = [markerPosition_E2+0.026, -0.225]
      saveStartStop = False
      startVal [time (s)] = SI_delay
      text [set every frame] = $100-int(rating)
      units = height
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    TextComponent estimateOther
      letterHeight = 0.03
      pos = (-0.35, 0.02)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Beslissing van ander:
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    TextComponent estimateSelf
      letterHeight = 0.03
      pos = (-0.35, -0.18)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Beslissing van jou:
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  Routine save_events
    CodeComponent code_11
      Code Type = Auto->JS
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      End Experiment:
        eventsFile.saveAsWideText(events_filename + '.tsv', delim='tab')
        # make sure everything is closed down
        eventsFile.abort()  # or data files will save again on exit
      End Routine:
        Tend_trial = triggerClock.getTime()

        # save

        eventsFile.addData('onset', Tstart_crosshair)
        eventsFile.addData('duration', Tend_trial - Tstart_crosshair)
        eventsFile.addData('trial_number', loop_trials.thisN + 1 + 25 * (int(expInfo['run'])-1) )
        if nTotal == 5 and confidence_level == 1:
            eventsFile.addData('trial_type', "low_low")
        elif nTotal == 5 and confidence_level == 2:
            eventsFile.addData('trial_type', "low_medium")
        elif nTotal == 5 and confidence_level == 3:
            eventsFile.addData('trial_type', "low_high")
        elif nTotal == 45 and confidence_level == 1:
            eventsFile.addData('trial_type', "high_low")
        elif nTotal == 45 and confidence_level == 2:
            eventsFile.addData('trial_type', "high_medium")
        elif nTotal == 45 and confidence_level == 3:
            eventsFile.addData('trial_type', "high_high")
        eventsFile.addData('estimate1', estimate1)
        eventsFile.addData('estimate1_rt', estimate1_rt)
        eventsFile.addData('estimate_peer', peer_estimate)
        eventsFile.addData('estimate2', estimate2)
        eventsFile.addData('estimate2_rt', estimate2_rt)
        eventsFile.addData('true_ratio', true_ratio)
        eventsFile.addData('seen_ratio', seen_ratio)
        eventsFile.addData('filler_trial', filler_trial)

        # save all timings

        # crosshair
        eventsFile.addData('onset_crosshair', Tstart_crosshair)
        eventsFile.addData('duration_crosshair', Tend_crosshair - Tstart_crosshair)

        # mushroom fields /samples
        eventsFile.addData('onset_field1', Tstart_field1)
        eventsFile.addData('duration_field1', Tend_field1 - Tstart_field1)

        if Tstart_field5: # only save when all samples are shown and their timing is thus recorded (during piloting, I sometimes set the number of fields to 1 to go faster)
            eventsFile.addData('onset_field2', Tstart_field2)
            eventsFile.addData('duration_field2', Tend_field2 - Tstart_field2)

            eventsFile.addData('onset_field3', Tstart_field3)
            eventsFile.addData('duration_field3', Tend_field3 - Tstart_field3)

            eventsFile.addData('onset_field4', Tstart_field4)
            eventsFile.addData('duration_field4', Tend_field4 - Tstart_field4)

            eventsFile.addData('onset_field5', Tstart_field5)
            eventsFile.addData('duration_field5', Tend_field5 - Tstart_field5)

        # first estimation phase
        eventsFile.addData('onset_estimate1', Tstart_estimate1)
        eventsFile.addData('duration_estimate1', Tend_estimate1 - Tstart_estimate1)

        # second estimation phase
        if Tstart_SI: # non existent when pp was too late on first estimate
            eventsFile.addData('onset_SI', Tstart_SI)
            eventsFile.addData('duration_SI', Tend_SI - Tstart_SI)

            eventsFile.addData('onset_estimate2', Tstart_estimate2)
            eventsFile.addData('duration_estimate2', Tend_estimate2 - Tstart_estimate2)


        #end of trial, next line:
        eventsFile.nextEntry()
Flow
  Routine setup
  Routine start_slide
  Routine import_wave1_data
  Routine waitForTrigger
  LoopInitiator loop_trials loopType="TrialHandler"
    conditionsFile = $trialStructure_file
    loopType = random
    nReps = 1
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    Routine setupSamples
    Routine crossHair
    LoopInitiator loop_samples loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 5
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      Routine mushroomSample
      Routine ISI
    LoopTerminator loop_samples
    Routine firstEstimation
    Routine ISI
    Routine SI
    Routine tooLate_feedback
    Routine save_events
  LoopTerminator loop_trials
  Routine showBonus
