PsychoPy2experiment version="2021.1.4"
Settings
  Data filename = u'../../../raw_data/sub-%03d/reversalLearning/sub-%03d_task-reversalLearning_beh' % (int(expInfo['participant']),int(expInfo['participant']))
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1504, 1003]
  expName = ReversalLearning
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Routines
  Routine trial
    KeyboardComponent response_button
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        # counterbalance background color of triangle and circle.
        if int(expInfo['participant']) % 2 == 0:
            col_triangle = "royalblue"
            col_circle = "gold"
        else:
            col_triangle = "gold"
            col_circle = "royalblue"

        # counterbalance block order (which polygon is the best option when?), orthogonal to counterbalancing of background color
        if (int(expInfo['participant']) - 1) % 4 < 2:
            reference_polygon = "triangle"
        else:
            reference_polygon = "circle"

        # set up probabilities and reversals
        probability_order = [0.2, 0.8, 0.5, 0.8, 0.2, 0.8, 0.5, 0.2, 0.8, 0.2, 0.5, 0.2, 0.8, 0.5, 0.8, 0.2, 0.5, 0.2, 0.8, 0.2, 0.5, 0.8, 0.5, 0.8, 0.2, 0.8, 0.2, 0.5, 0.8, 0.2, 0.8, 0.5, 0.8, 0.2, 0.5, 0.8, 0.2, 0.5, 0.2, 0.8] # fixed
        block_number = 0
        new_block = 1 # Is the current trial the start of a new block with new probabilities?
        switch_counter = [] # to count how many out of 10 trials was a hit; switch probabilities at 7 out of 10.

        # set up others parameters
        maxRT = 5 # 2 sec in Cools et al., 2002
        feedback_face = "happyface.png" # initial value, changes according to participant's response.
        previous_outcome = []
        previous_response = []
        stay_shift = []
        points = 0
        trial = 1
        nTrials = 250
        nTrials_for_bonus = 20 # how many trials are selected to base bonus points on?
      Begin Routine:
        # randomize lateral position of triangle and circle
        lateralization = np.random.choice((0,1),size = 1)
        if lateralization == 0:
            position_triangle = "left"
            pos_triangle = -0.15
            pos_circle = 0.15
        elif lateralization == 1:
            position_triangle = "right"
            pos_triangle = 0.15
            pos_circle = -0.15

        # define probabilities
        if reference_polygon == "triangle":
            prob_triangle_rewarded = probability_order[block_number]
        elif reference_polygon == "circle":
            prob_triangle_rewarded = 1 - probability_order[block_number] # reverse probabilities if reference polygon is circle (counterbalanced)
        # define correct polygon based on probability value
        if new_block == 1:
            if prob_triangle_rewarded > 0.5:
                correct_polygon = 0
            elif prob_triangle_rewarded < 0.5:
                correct_polygon = 1
            elif prob_triangle_rewarded == 0.5:
                correct_polygon = 1 - correct_polygon

        # rename for clarity in output file
        if correct_polygon == 0:
            correct_polygon_name = "triangle"
        elif correct_polygon == 1:
            correct_polygon_name = "circle"

        # define rewarded polygon based on chance
        random_number = np.random.random()
        if random_number <= prob_triangle_rewarded:
            rewarded_polygon = "triangle"
        elif random_number > prob_triangle_rewarded:
            rewarded_polygon = "circle"

        # set initial position of mouse
        #win.mouseVisible = True
        #mouseResponse.setPos(newPos=(0, 0))
      Each Frame:
        # time out after maxRT
        if t > maxRT:
            continueRoutine = False
      End Routine:
        # rt is time right after last screen flip
        response_time = t

        # define response
        #if mouseResponse.isPressedIn(background_triangle):
        #    response = "triangle"
        #elif mouseResponse.isPressedIn(background_circle):
        #    response = "circle"
        if response_button.keys == []: # if no response given / too late; they will get a minus point, but they will have to redo this trial, so they cannot finish the experiment without responding to all 250 trials.
            response = ""
            response_time = []
        elif response_button.keys == position_triangle:
            response = "triangle"
        else:
            response = "circle"

        # define if was participant was correct (picked high probability polygon)
        if response == correct_polygon_name:
            correct = 1
        else:
            correct = 0

        # define if was participant was rewarded
        if response == rewarded_polygon:
            outcome = "win"
        else:
            outcome = "lose"

        # define if it was a stay or shift response
        if trial is not 1:
            if response == previous_response:
                stay_shift = "stay"
            elif response is not previous_response:
                stay_shift = "shift"

        # save data
        eventsFile.addData('participant', int(expInfo['participant']))
        eventsFile.addData('trial_number', trial)
        eventsFile.addData('block_number', block_number + 1)
        eventsFile.addData('response', response)
        eventsFile.addData('response_button', response_button.keys)
        eventsFile.addData('response_time', response_time)
        eventsFile.addData('correct', correct)
        eventsFile.addData('outcome', outcome)
        eventsFile.addData('previous_outcome', previous_outcome)
        eventsFile.addData('stay_shift', stay_shift)
        eventsFile.addData('new_block', new_block)
        eventsFile.addData('correct_polygon', correct_polygon_name)
        eventsFile.addData('rewarded_polygon', rewarded_polygon)
        eventsFile.addData('prob_triangle_rewarded', prob_triangle_rewarded)
        eventsFile.addData('position_triangle', position_triangle)
        eventsFile.nextEntry()

        # swap the correct / high probability polygon
        # swap if 7 out of the last 10 responses were correct, or after the 16th trial
        if response: # only count as trial if responded
            switch_counter.append(correct)
        if (sum(switch_counter[-10:]) >= 7 and len(switch_counter) >= 10) or len(switch_counter) == 16:
            new_block = 1
            block_number += 1 # switch to next block with new probabilities for next trial
            switch_counter = []
        else:
            new_block = 0

        # define feedback
        if response == "":
            tooLate = 1
            points -= 1
        elif response is not "":
            tooLate = 0
            trial += 1 # only progress to next trial if responded, not if too late
            if outcome == "win":
                feedback_face = "happyface.png"
                points += 1
            elif outcome == "lose":
                feedback_face = "sadface.png"
                points -= 1

        # update previous_outcome and previous_response (only when a response was given)
        if response is not "":
            previous_outcome = outcome
            previous_response = response

        # finish task after ntrials
        if trial == nTrials + 1:
            loop_trials.finished=True

        # hide cursor
        win.mouseVisible = False
    PolygonComponent background_triangle
      fillColor = $col_triangle
      lineColor = $col_triangle
      pos [set every repeat] = (pos_triangle, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent triangle
      fillColor = none
      lineColor = black
      lineWidth = 15
      pos [set every repeat] = (pos_triangle, 0)
      saveStartStop = False
      shape = triangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent background_circle
      fillColor = $col_circle
      lineColor = $col_circle
      pos [set every repeat] = (pos_circle, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent circle
      fillColor = none
      lineColor = black
      lineWidth = 15
      nVertices = 1000
      pos [set every repeat] = (pos_circle, 0)
      saveStartStop = False
      shape = regular polygon...
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent mouseResponse
      clickable = background_triangle, background_circle,
      disabled = True
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine feedback
    ImageComponent face
      image [set every repeat] = $feedback_face
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [condition] = tooLate == 0
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    TextComponent text
      letterHeight = 0.04
      saveStartStop = False
      startVal [condition] = tooLate == 1
      text = $feedback_text
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    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        if t > 2:
            continueRoutine = False
  Routine setup
    CodeComponent code_3
      Code Type = Py
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      Before Experiment:
        # AT THE END OF THE TASK, THE EXPERIMENTER CAN CLOSE THE GAME BY PRESSING 's'.
        # OTHERWISE, THE TASK CLOSES AUTOMATICALLY AFTER 10 SECS.
      Begin Experiment:
        # import package
        from numpy import random
        from random import sample

        # set up datafile
        events_filename = _thisDir + os.sep + u'../../../raw_data/sub-%03d/reversalLearning/sub-%03d_task-reversalLearning_beh' % (int(expInfo['participant']),int(expInfo['participant']))
        eventsFile = data.ExperimentHandler(savePickle=False, saveWideText=True, dataFileName=events_filename)

        # hide mouse
        win.mouseVisible = False

        # Language
        language = "Dutch" # "Dutch" or "English"

        ###############################################################################
        ### text ###
        ###############################################################################

        # instructions
        if language == "Dutch":
            Instr1 = ("WELKOM!\n\n\nJe gaat nu eerst te instructies voor het volgende spel lezen.\n\n"
            "Je kunt heen en weer gaan door de instructies door middel van de LINKER en RECHTER PIJL op het toetsenbord.\n\n\n"
            "Druk nu op de RECHTER pijl om door te gaan naar de instructies.")

            Instr2 = ("Dit spel bestaat uit meerdere rondes.\n"
            "In iedere ronde moet je kiezen tussen 2 plaatjes: een driehoek of een cirkel.\n\n"
            "Met elke keuze kun je winnen of verliezen.\n"
            "Eén van de symbolen geeft steeds meer kans om te winnen en het andere symbool geeft meer kans om te verliezen.\n"
            "Het is jouw taak om erachter te komen welk symbool meer kans geeft om te winnen en dat symbool te kiezen.\n\n"
            "Als je het linker symbool wilt kiezen, druk je op de linker pijl op het toetsenbord.\n"
            "Als je het rechter symbool wilt kiezen, druk je op de rechter pijl op het toetsenbord.\n\n\n\n")

            Instr3 = ("Als je wint wordt dit aangegeven door een groen, vrolijk gezicht.\n"
            "Als je verliest wordt dit aangegeven door een rood, verdrietig gezicht.\n\n"
            "Je hebt 5 seconden om je antwoord te geven. Als je te laat bent komt er op het scherm \"Te Laat!\" te staan en verlies je ook.")

            Instr4 = ("Wissel:\n\nGedurende het spel kan het meerdere keren veranderen welk symbool meer kans geeft om te winnen of te verliezen. "
            "Het symbool dat eerst winst opleverde zal nu verlies opleveren (en andersom).\n\n\n"
            "Kans uitkomst:\n\nIn sommige rondes kan het gebeuren dat je toch verliest, ondanks dat je het symbool had gekozen dat meer kans opleverde om te winnen. "
            "Andersom kan het ook gebeuren dat je toch wint, ondanks dat je het symbool had gekozen dat meer kans opleverde om te verliezen.")

            Instr5 = ("Bonus:\n\nAan het einde van het spel kiest de computer willekeurig 20 rondes uit.\n"
            "Voor elk van die 20 rondes waarop je had gewonnen ontvang je 10 cent bonus, maar voor elk van de rondes waarop je had verloren verlies je 10 cent.\n"
            "Je kunt dus maximaal €2 bonus verdienen. Je bonus zal nooit lager uitvallen dan €0.")

            Instr6 = ("Het spel duurt in totaal ongeveer 10 minuten.\n\n"
            "Als je nog vragen hebt kun je deze nu aan de onderzoeker stellen,\n"
            "anders kun je op ENTER drukken om het spel te starten.")
        elif language == "English": # still need to translate
            Instr1 = ("WELKOM!\n\n\nJe gaat nu eerst te instructies voor het volgende spel lezen.\n\n"
            "Je kunt heen en weer gaan door de instructies door middel van de LINKER en RECHTER PIJL op het toetsenbord.\n\n\n"
            "Druk nu op de RECHTER pijl om door te gaan naar de instructies.")

            Instr2 = ("Dit spel bestaat uit meerdere rondes.\n"
            "In iedere ronde moet je kiezen tussen 2 plaatjes: een driehoek of een cirkel.\n\n"
            "Met elke keuze kun je winnen of verliezen.\n"
            "Eén van de symbolen geeft steeds meer kans om te winnen en het andere symbool geeft meer kans om te verliezen.\n"
            "Het is jouw taak om erachter te komen welk symbool meer kans geeft om te winnen en dat symbool te kiezen.\n\n"
            "Als je het linker symbool wilt kiezen, druk je op de linker pijl op het toetsenbord.\n"
            "Als je het rechter symbool wilt kiezen, druk je op de rechter pijl op het toetsenbord.\n\n\n\n")

            Instr3 = ("Als je wint wordt dit aangegeven door een groen, vrolijk gezicht.\n"
            "Als je verliest wordt dit aangegeven door een rood, verdrietig gezicht.\n\n"
            "Je hebt 5 seconden om je antwoord te geven. Als je te laat bent komt er op het scherm \"Te Laat!\" te staan en verlies je ook.")

            Instr4 = ("Wissel:\n\nGedurende het spel kan het meerdere keren veranderen welk symbool meer kans geeft om te winnen of te verliezen. "
            "Het symbool dat eerst winst opleverde zal nu verlies opleveren (en andersom).\n\n\n"
            "Kans uitkomst:\n\nIn sommige rondes kan het gebeuren dat je toch verliest, ondanks dat je het symbool had gekozen dat meer kans opleverde om te winnen. "
            "Andersom kan het ook gebeuren dat je toch wint, ondanks dat je het symbool had gekozen dat meer kans opleverde om te verliezen.")

            Instr5 = ("Bonus:\n\nAan het einde van het spel kiest de computer willekeurig 20 rondes uit.\n"
            "Voor elk van die 20 rondes waarop je had gewonnen ontvang je 10 cent bonus, maar voor elk van de rondes waarop je had verloren verlies je 10 cent.\n"
            "Je kunt dus maximaal €2 bonus verdienen. Je bonus zal nooit lager uitvallen dan €0.")

            Instr6 = ("Het spel duurt in totaal ongeveer 10 minuten.\n\n"
            "Als je nog vragen hebt kun je deze nu aan de onderzoeker stellen,\n"
            "anders kun je op ENTER drukken om het spel te starten.")

        # other text
        if language == "Dutch":
            goodLuck_text = "Houd je vingers op de pijlen.\n\nSucces!" # good luck text right before the task starts
            feedback_text = "Te laat!" # feedback text when too late
            finish_text1 = "Dit is het einde van het spel!\nJe hebt in totaal €"  # text to tell the participant the game has finished and to convey the total points earned.
            finish_text2 = " verdiend.\n\nGeef nu aan de onderzoeker aan dat het spel is afgelopen."
        elif language == "English":
            goodLuck_text = "Please keep your fingers on the arrows.\n\nGood luck!"
            feedback_text = "Too late!"
            finish_text1 = "This is the end of the game.\nIn total, you earned €"
            finish_text2 = ".\n\nPlease tell the researcher you have finished the game."
      End Experiment:
        eventsFile.saveAsWideText(events_filename + '.csv', delim='comma')
        # make sure everything is closed down
        eventsFile.abort()  # or data files will save again on exit
  Routine instructions
    KeyboardComponent navigate
      allowedKeys = 'right', 'left', 'return', 'num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent instructions_text
      Code Type = Py
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      Begin Experiment:
        InstrDict = { "1": Instr1,
                      "2": Instr2,
                      "3": Instr3,
                      "4": Instr4,
                      "5": Instr5,
                      "6": Instr6,
        }

        currentInstr = "1"
      End Routine:
        if (navigate.keys == "return" or navigate.keys == "num_enter") and int(currentInstr) == 6:
            currentInstr = int(currentInstr) + 1
        elif navigate.keys == "right" and int(currentInstr) == 6:
            currentInstr = int(currentInstr)
        elif navigate.keys == "right" and int(currentInstr) != 6:
            currentInstr = int(currentInstr) + 1
        elif navigate.keys == "left":
            currentInstr = int(currentInstr) - 1

        if currentInstr == 0:
            currentInstr = 1  # can't go lower than
        elif currentInstr == 7:
            loop_instructions.finished=True
            currentInstr = 1 # otherwise, currentPr will give an error on the next round, because it is out-of-range.

        currentInstr = str(currentInstr)
    TextComponent text_2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $InstrDict[currentInstr]
      wrapWidth = 1.2
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    PolygonComponent background_triangle_example
      fillColor [set every repeat] = $col_triangle
      lineColor [set every repeat] = $col_triangle
      pos = (-0.15, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [condition] = currentInstr == "2"
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    PolygonComponent triangle_example
      fillColor = none
      lineColor = black
      lineWidth = 15
      pos = (-0.15, -0.3)
      saveStartStop = False
      shape = triangle
      size = (0.15, 0.15)
      startVal [condition] = currentInstr == "2"
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    PolygonComponent background_circle_example
      fillColor [set every repeat] = $col_circle
      lineColor [set every repeat] = $col_circle
      pos = (0.15, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [condition] = currentInstr == "2"
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    PolygonComponent circle_example
      fillColor = none
      lineColor = black
      lineWidth = 15
      nVertices = 1000
      pos = (0.15, -0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.15, 0.15)
      startVal [condition] = currentInstr == "2"
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    ImageComponent happyface_example
      image = happyface.png
      pos = (-0.15, -0.3)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [condition] = currentInstr == "3"
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    ImageComponent sadface_example
      image = sadface.png
      pos = (0.15, -0.3)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [condition] = currentInstr == "3"
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  Routine good_luck
    TextComponent text_3
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = $goodLuck_text
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  Routine finish
    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        # save now to compare total points with previous studies
        eventsFile.addData('points', points)

        list_outcomes = [];
        for iTrials in range(nTrials):
            list_outcomes.append(eventsFile.getAllEntries()[iTrials]['outcome'])
        selection_outcomes = sample(list_outcomes, nTrials_for_bonus)
        points = selection_outcomes.count('win') * 0.10 - selection_outcomes.count('lose') * 0.10

        # don't give them minus points
        if points < 0:
            points_shown = 0
        else:
            points_shown = points

        finish_text = finish_text1 + format(points_shown, '.2f') + finish_text2

        eventsFile.addData('bonus', points_shown)

        # Experimenter closes task by pressing "s"
      Each Frame:
        #if t > 10:
        #    continueRoutine = False
    TextComponent text_4
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $finish_text
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    KeyboardComponent key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setup
  LoopInitiator loop_instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 200
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    Routine instructions
  LoopTerminator loop_instructions
  Routine good_luck
  LoopInitiator loop_trials loopType="TrialHandler"
    loopType = sequential
    nReps = 1000
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    Routine trial
    Routine feedback
  LoopTerminator loop_trials
  Routine finish
